<?xml version="1.0" encoding="utf-8"?>
<MethodSet>
  <DeleteAllMethods>false</DeleteAllMethods>
  <Method methodName="Incubation_50C" creator="Jogi_H" dateTime="2024-08-27T13:50:22.2544955-04:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>2</FluidQuantity>
    <PostHeating>false</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>4.4</Slope>
      <PlateauTemperature>50</PlateauTemperature>
      <PlateauTime>3600</PlateauTime>
      <OverShootSlope1>4.4</OverShootSlope1>
      <OverShootTemperature>13.7</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>2.2</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
</MethodSet>