private function Gibson_Assembly(  ) void ;
private function PCR(  ) void ;
private function Transformation(  ) void ;
private function Transport_Test(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, Tips_50, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, 1, ML_STAR.MlStar50ulTipWithFilter, 0, 7, 0, 0, Translate("Reload the 50ul Tips"), 0);
  VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Tips_300, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, 1, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0, 7, 0, 0, Translate("Reload the 300ul Tips"), 0);
  VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Tips_1000, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, 1, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0, 7, 0, 0, Translate("Reload the 1000ul Tips"), 0);
  HSLHamHeaterShaker::StopAllShaker();
  HSLHamHeaterShaker::Terminate();
  NGSSTARPREP::ODTC_StopProtocol(t_intDeviceNumberODTC, 1);
  NGSSTARPREP::ODTC_Terminate(t_intDeviceNumberODTC, 1);
  HSLInhecoTECLib::StopTemperatureControl(0, 1, t_strErrcode);
  HSLInhecoTECLib::Terminate(1);
}

private function PCR(  ) void {
  private variable loopCounter2;
  private variable loopCounter3;
  private variable loopCounter4;
  private variable loopCounter5;
  if(0){
    MECC::TraceComment("Group start - IDT Template Addition");
    {
      loopCounter5 = 0;
      while (
         (ML_STAR.PCR_Plate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.IDT_TemplatePlate, 1, ML_STAR.MlStar50ulTipWithFilter, 1, ML_STAR.PCR_Plate, 1);
        loopCounter5 = loopCounter5 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.PCR_Plate.GetCurrentPosition() > 0 && ML_STAR.PCR_Plate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.IDT_TemplatePlate.SetMax(ML_STAR.IDT_TemplatePlate.GetTotal());
      ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
      ML_STAR.PCR_Plate.SetMax(ML_STAR.PCR_Plate.GetTotal());
      ML_STAR.IDT_TemplatePlate.SetCurrentPosition(1);
      ML_STAR.PCR_Plate.SetCurrentPosition(1);
    }
    MECC::TraceComment("Group end - IDT Template Addition");
    t_strChannelPattern = Translate("10000000");
    MECC::TraceComment("Group start - MasterMix Creation");
    MECC::TraceComment(Translate("++++++++++++++++++++ DI Water ++++++++++++++++++++++"));
    if (t_intDIWaterVolume <= 50)
    {
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    else
    {
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    MECC::TraceComment(Translate("++++++++++++++++++++ Forward Primer ++++++++++++++++++++++"));
    t_strChannelPattern = Translate("10000000");
    if (t_intForwardPrimer <= 50)
    {
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    else
    {
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    MECC::TraceComment(Translate("++++++++++++++++++++ Reverse Primer ++++++++++++++++++++++"));
    t_strChannelPattern = Translate("10000000");
    if (t_intReversePrimer <= 50)
    {
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    else
    {
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    MECC::TraceComment(Translate("++++++++++++++++++++ Q5 2x MasterMix ++++++++++++++++++++++"));
    t_strChannelPattern = Translate("10000000");
    t_intMixVolume = t_intQ5_2XMastermixVolume;
    if (t_intQ5_2XMastermixVolume <= 300)
    {
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    else
    {
      t_intQ5_2XMastermixVolume = t_intQ5_2XMastermixVolume / (2 * 1.0);
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      {
        for(loopCounter3 = 0; loopCounter3 < 2;)
        {
          loopCounter3 = loopCounter3 + 1;
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
          ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
          ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        }
      }
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    MECC::TraceComment("Group end - MasterMix Creation");
    MECC::TraceComment("Group start - Addition to PCR Plate and 30s Shake");
    {
      loopCounter2 = 0;
      while (
         (ML_STAR.PCR_Plate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.MasterMix_Tube, 1, ML_STAR.MlStar50ulTipWithFilter, 1, ML_STAR.PCR_Plate, 1);
        loopCounter2 = loopCounter2 + 1;
        ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        if (
           (ML_STAR.PCR_Plate.GetCurrentPosition() > 0 && ML_STAR.PCR_Plate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.MasterMix_Tube.SetMax(ML_STAR.MasterMix_Tube.GetTotal());
      ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
      ML_STAR.PCR_Plate.SetMax(ML_STAR.PCR_Plate.GetTotal());
      ML_STAR.MasterMix_Tube.SetCurrentPosition(1);
      ML_STAR.PCR_Plate.SetCurrentPosition(1);
    }
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    HSLHamHeaterShaker::StartShaker(hhs2, 700);
    hdl_ShakeTimer1.SetTimerViewName("");
    if( 0 == hdl_ShakeTimer1.SetTimer(30) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == hdl_ShakeTimer1.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    HSLHamHeaterShaker::StopShaker(hhs2);
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    MECC::TraceComment("Group end - Addition to PCR Plate and 30s Shake");
  }
  MECC::TraceComment("Group start - ODTC steps");
  if(0){
    t_strODTCFolderXML_PCR = StrConcat4(t_strODTCFolderXML, Translate("\\"), t_strPCRMethodName, Translate(".xml"));
    NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
    ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    NGSSTARPREP::ODTC_DownloadProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML_PCR);
    NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
    NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML_PCR, t_strPCRMethodName, t_intTimeForProtocol, t_intRequestIDForActiveProtocol, 1);
    NGSSTARPREP::ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
    NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
  }
  ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
  ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
  ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
  ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
  NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("Init_25C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
  MECC::TraceComment("Group end - ODTC steps");
  MECC::TraceComment("Group start - Adding 3uL of Amplified DNA to new plate for gel electrophoresis");
  {
    loopCounter4 = 0;
    while (
       (ML_STAR.HHS_PCRPostAmpPos.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.HHS_PCRPostAmpPos, 1, ML_STAR.MlStar50ulTipWithFilter, 1, ML_STAR.SecondaryPCRPlate, 1);
      loopCounter4 = loopCounter4 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (ML_STAR.HHS_PCRPostAmpPos.GetCurrentPosition() > 0 && ML_STAR.HHS_PCRPostAmpPos.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.HHS_PCRPostAmpPos.SetMax(ML_STAR.HHS_PCRPostAmpPos.GetTotal());
    ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
    ML_STAR.SecondaryPCRPlate.SetMax(ML_STAR.SecondaryPCRPlate.GetTotal());
    ML_STAR.HHS_PCRPostAmpPos.SetCurrentPosition(1);
    ML_STAR.SecondaryPCRPlate.SetCurrentPosition(1);
  }
  MECC::TraceComment("Group end - Adding 3uL of Amplified DNA to new plate for gel electrophoresis");
}

private function Gibson_Assembly(  ) void {
  private dialog customDialog_1;
  private variable loopCounter3;
  private variable loopCounter2;
  private timer hdl_CoolingTimer;
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  MECC::TraceComment("Group start - Adding 1.5uL of Amplified DNA to new plate for Cloning");
  {
    loopCounter2 = 0;
    while (
       (ML_STAR.HHS_PCRPostAmpPos.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.HHS_PCRPostAmpPos, 1, ML_STAR.MlStar50ulTipWithFilter, 1, ML_STAR.PCR_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (ML_STAR.HHS_PCRPostAmpPos.GetCurrentPosition() > 0 && ML_STAR.HHS_PCRPostAmpPos.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.HHS_PCRPostAmpPos.SetMax(ML_STAR.HHS_PCRPostAmpPos.GetTotal());
    ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
    ML_STAR.PCR_Plate.SetMax(ML_STAR.PCR_Plate.GetTotal());
    ML_STAR.HHS_PCRPostAmpPos.SetCurrentPosition(1);
    ML_STAR.PCR_Plate.SetCurrentPosition(1);
  }
  MECC::TraceComment("Group end - Adding 1.5uL of Amplified DNA to new plate for Cloning");
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  t_strChannelPattern = Translate("10000000");
  MECC::TraceComment("Group start - Master Mix Creation");
  MECC::TraceComment(Translate("++++++++++++++++++++ Destination Vector ++++++++++++++++++++++"));
  if (t_intDestinationVectorVolume <= 50)
  {
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  else
  {
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  MECC::TraceComment(Translate("++++++++++++++++++++ 2x Gibson Assembly Mix ++++++++++++++++++++++"));
  t_intMixVolume = t_intGAMix2X_Volume;
  if (t_intGAMix2X_Volume <= 50)
  {
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  else
  {
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  MECC::TraceComment("Group end - Master Mix Creation");
  MECC::TraceComment("Group start - MM addition to PCR plate");
  {
    loopCounter3 = 0;
    while (
       (ML_STAR.HHS_PCR_CloningPlate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.GA_MasterMix, 1, ML_STAR.HHS_PCR_CloningPlate, 1, ML_STAR.MlStar50ulTipWithFilter, 1);
      loopCounter3 = loopCounter3 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (ML_STAR.HHS_PCR_CloningPlate.GetCurrentPosition() > 0 && ML_STAR.HHS_PCR_CloningPlate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.GA_MasterMix.SetMax(ML_STAR.GA_MasterMix.GetTotal());
    ML_STAR.HHS_PCR_CloningPlate.SetMax(ML_STAR.HHS_PCR_CloningPlate.GetTotal());
    ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
    ML_STAR.GA_MasterMix.SetCurrentPosition(1);
    ML_STAR.HHS_PCR_CloningPlate.SetCurrentPosition(1);
  }
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  HSLHamHeaterShaker::StartShaker(hhs2, 700);
  hdl_ShakeTimer1.SetTimerViewName("");
  if( 0 == hdl_ShakeTimer1.SetTimer(10) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == hdl_ShakeTimer1.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StopShaker(hhs2);
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  MECC::TraceComment("Group end - MM addition to PCR plate");
  t_strODTCFolderXML = StrConcat4(t_strODTCFolderXML, Translate("\\"), Translate("Incubation_50C"), Translate(".xml"));
  NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
  NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
  ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
  ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
  ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
  NGSSTARPREP::ODTC_DownloadProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML);
  NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
  NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("Incubation_50C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, 1);
  NGSSTARPREP::ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
  NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
  ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
  ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
  ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
  ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  if (t_intProcess3Selected == 1)
  {
    MECC::TraceComment(Translate("++++++++++++++++++++++++++ \n\nKeeping the plate cold for 5 mins post Incubation, then moving it so that the Competent cells can be placed on the cold position\n\n+++++++++++++++++++++++"));
    hdl_CoolingTimer.SetTimerViewName("");
    if( 0 == hdl_CoolingTimer.SetTimer(300) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == hdl_CoolingTimer.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  }
}

private function Transformation(  ) void {
  private variable loopCounter4;
  private timer hdl_IncubationTimer2;
  private timer hdl_IncubationTimer3;
  private timer hdl_IncubationTimer4;
  private variable loopCounter5;
  private variable loopCounter6;
  private timer hdl_IncubationTimer5;
  private variable t_fltCurrentHHS2temp_42C;
  private timer hdl_HHS2_timer2;
  private dialog customDialog_2;
  customDialog_2.InitCustomDialog("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");
  customDialog_2.ShowCustomDialog();
  {
    loopCounter4 = 0;
    while (
       (ML_STAR.PCR_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.CompetentCells, 1, ML_STAR.MlStar50ulTipWithFilter, 1, ML_STAR.PCR_Plate, 1);
      loopCounter4 = loopCounter4 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (ML_STAR.PCR_Plate.GetCurrentPosition() > 0 && ML_STAR.PCR_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.CompetentCells.SetMax(ML_STAR.CompetentCells.GetTotal());
    ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
    ML_STAR.PCR_Plate.SetMax(ML_STAR.PCR_Plate.GetTotal());
    ML_STAR.CompetentCells.SetCurrentPosition(1);
    ML_STAR.PCR_Plate.SetCurrentPosition(1);
  }
  hdl_IncubationTimer2.SetTimerViewName("");
  if( 0 == hdl_IncubationTimer2.SetTimer(1800) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StartTempCtrl(hhs2, 42, 0);
  {
    loopCounter2 = 0;
    while (1 == 1)
    {
      loopCounter2 = loopCounter2 + 1;
      HSLHamHeaterShaker::GetTemperature(hhs2, t_fltCurrentHHS2temp_42C);
      TrcTrace(t_fltCurrentHHS2temp_42C, Translate(""));
      if (t_fltCurrentHHS2temp_42C >= 42)
      {
        break;
      }
      hdl_HHS2_timer2.SetTimerViewName("");
      if( 0 == hdl_HHS2_timer2.SetTimer(60) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == hdl_HHS2_timer2.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
  }
  if( 0 == hdl_IncubationTimer2.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("Heat Shock at 42C for 30s"));
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  hdl_IncubationTimer3.SetTimerViewName("");
  if( 0 == hdl_IncubationTimer3.SetTimer(15) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == hdl_IncubationTimer3.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("Back to cold for 3mins"));
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  hdl_IncubationTimer4.SetTimerViewName("");
  if( 0 == hdl_IncubationTimer4.SetTimer(180) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StartTempCtrl(hhs3, 37, 0);
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  {
    loopCounter5 = 0;
    while (
       (ML_STAR.TransformationPlate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 1, ML_STAR.SOC_RecoveryMedia, 1, ML_STAR.TransformationPlate, 1);
      loopCounter5 = loopCounter5 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (ML_STAR.TransformationPlate.GetCurrentPosition() > 0 && ML_STAR.TransformationPlate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.MlStar1000ulHighVolumeTipWithFilter.SetMax(ML_STAR.MlStar1000ulHighVolumeTipWithFilter.GetTotal());
    ML_STAR.SOC_RecoveryMedia.SetMax(ML_STAR.SOC_RecoveryMedia.GetTotal());
    ML_STAR.TransformationPlate.SetMax(ML_STAR.TransformationPlate.GetTotal());
    ML_STAR.SOC_RecoveryMedia.SetCurrentPosition(1);
    ML_STAR.TransformationPlate.SetCurrentPosition(1);
  }
  if( 0 == hdl_IncubationTimer4.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  {
    loopCounter6 = 0;
    while (
       (ML_STAR.CompetentCells.GetCurrentPosition() > 0)
    && (ML_STAR.TransformationPlate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.CompetentCells, 1, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 1, ML_STAR.TransformationPlate, 1);
      loopCounter6 = loopCounter6 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (ML_STAR.CompetentCells.GetCurrentPosition() > 0 && ML_STAR.CompetentCells.GetMax() == 0 )
      && (ML_STAR.TransformationPlate.GetCurrentPosition() > 0 && ML_STAR.TransformationPlate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.CompetentCells.SetMax(ML_STAR.CompetentCells.GetTotal());
    ML_STAR.MlStar1000ulHighVolumeTipWithFilter.SetMax(ML_STAR.MlStar1000ulHighVolumeTipWithFilter.GetTotal());
    ML_STAR.TransformationPlate.SetMax(ML_STAR.TransformationPlate.GetTotal());
    ML_STAR.CompetentCells.SetCurrentPosition(1);
    ML_STAR.TransformationPlate.SetCurrentPosition(1);
  }
  HSLHamHeaterShaker::WaitForTempCtrl(hhs3);
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  HSLHamHeaterShaker::StartShaker(hhs3, 750);
  hdl_IncubationTimer5.SetTimerViewName("");
  if( 0 == hdl_IncubationTimer5.SetTimer(3600) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == hdl_IncubationTimer5.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StopShaker(hhs3);
  HSLHamHeaterShaker::StopTempCtrl(hhs3);
}

private function Transport_Test(  ) void {
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  if(0){
    ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
    ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
    ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
  }
}
