private function HSS_Shaking( variable Zyppy_Selected_HSS, variable Zyppy_Vortex_Speed, variable Zyppy_Vortex_Duration ) void ;
private function MagBinding_Bead_HSS_Shaker( variable Zyppy_HSS_MagBinding_Bead_Vortex_Total_Duration, variable Zyppy_HSS_MagBinding_Bead_Intermittent_Rest_Duration, variable Zyppy_HSS_MagBinding_Bead_Intermittent_Vortex_Duration, variable Zyppy_Selected_HSS, variable Zyppy_HSS_Vortex_Speed ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  HSLHamHeaterShaker::Terminate();
}

private function HSS_Shaking( variable Zyppy_Selected_HSS, variable Zyppy_Vortex_Speed, variable Zyppy_Vortex_Duration ) void {
  private timer timer1;
  HSLHamHeaterShaker::StartShaker(Zyppy_Selected_HSS, Zyppy_Vortex_Speed);
  if( 0 == timer1.SetTimer(Zyppy_Vortex_Duration) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  HSLHamHeaterShaker::StopShaker(Zyppy_Selected_HSS);
}

private function MagBinding_Bead_HSS_Shaker( variable Zyppy_HSS_MagBinding_Bead_Vortex_Total_Duration, variable Zyppy_HSS_MagBinding_Bead_Intermittent_Rest_Duration, variable Zyppy_HSS_MagBinding_Bead_Intermittent_Vortex_Duration, variable Zyppy_Selected_HSS, variable Zyppy_HSS_Vortex_Speed ) void {
  private variable loopCounter9;
  private variable Zyppy_HSS_Magbinding_Bead_Total_Step_Duration;
  private variable Zyppy_HSS_MagBinding_Bead_Total_Loop_Itteration;
  private timer timer3;
  private timer timer4;
  Zyppy_HSS_Magbinding_Bead_Total_Step_Duration = Zyppy_HSS_MagBinding_Bead_Intermittent_Rest_Duration + Zyppy_HSS_MagBinding_Bead_Intermittent_Vortex_Duration;
  Zyppy_HSS_MagBinding_Bead_Total_Loop_Itteration = Zyppy_HSS_MagBinding_Bead_Vortex_Total_Duration / Zyppy_HSS_Magbinding_Bead_Total_Step_Duration;
  {
    for(loopCounter9 = 0; loopCounter9 < Zyppy_HSS_MagBinding_Bead_Total_Loop_Itteration;)
    {
      loopCounter9 = loopCounter9 + 1;
      HSLHamHeaterShaker::StartShaker(Zyppy_Selected_HSS, Zyppy_HSS_Vortex_Speed);
      if( 0 == timer3.SetTimer(Zyppy_HSS_MagBinding_Bead_Intermittent_Vortex_Duration) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      HSLHamHeaterShaker::StopShaker(Zyppy_Selected_HSS);
      if( 0 == timer4.SetTimer(Zyppy_HSS_MagBinding_Bead_Intermittent_Rest_Duration) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer4.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
    }
  }
}
