global device ML_STAR ("Cloning_v1.0.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "Visual_NTR_library\\Visual_NTR_library.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\Hamilton\\NGSStar\\Illumina\\DNAPrep\\Library\\NGSStarPrep.hs_" }
 namespace _Method { #include "..\\HSLUtilLib2.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "VectorCustomDialogs\\VectorCustomDialogs.hsl" }
 namespace _Method { #include "HSLInhecoTEC\\HSLInhecoTECLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\Hamilton\\NGSStar\\Illumina\\DNAPrep\\Library\\NGSStarProcesses.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
#include "Cloning_v1.0.res"
variable t_intProcess3Selected;
variable t_intProcess2Selected;
variable retValueDialog;
variable t_intProcess1Selected;
dialog customDialog_1;
variable loopCounter1;
variable retValueDialog2;
dialog customDialog_2;
sequence default;
dialog customDialog_3;
global variable t_intGelElectrophoresisVolume;
global variable hhs1;
global variable hhs2;
global variable t_intGATransferVolume;
global variable Tips_50;
global variable Tips_300;
variable t_blnShortenPreheat;
global variable t_strPCRMethodFilePath;
global variable t_strPCRMethodName;
global variable t_intGAMix2X_Volume;
global variable t_intDestinationVectorVolume;
global variable t_strEnzyme_300ulLiquidClass;
global variable t_int_IDTVolume;
global variable hhs3;
global variable t_strDeviceAddressODTC;
global variable t_strEnzyme_50ulLiquidClass;
global variable t_intRequestIDForActiveProtocol;
global variable t_intForwardPrimer;
global variable t_intQ5_2XMastermixVolume;
global variable t_intNumberofSamples;
global variable t_intGATransfertoPCRVolume;
global variable t_intMasterMixTransferVolume;
global variable t_intTimeForProtocol;
global variable t_intDIWaterVolume;
global variable t_strChannelPattern;
global variable t_intReversePrimer;
global variable t_intDeviceNumberODTC;
global variable t_strODTCFolderXML;
global variable t_strODTCFolderXML_PCR;
global sequence t_trpHamiltonComfortLidODTC;
global sequence t_trpStack_HamiltonComfortLids;
global variable t_intMixVolume;
global timer hdl_ShakeTimer1;
variable t_strLocalIPAddressOfComputer;
variable t_strODTCFolderXML_init;
variable t_strErrcode;
variable t_fltCurrentTemp;
variable t_strErrMessage;
variable loopCounter2;
variable t_fltCurrentHHS1temp;
variable t_fltCurrentHHS2temp;
timer hdl_CPAC_timer;
timer hdl_HHS1_timer;
timer hdl_HHS2_timer;
variable Tips_1000;
dialog customDialog_4;
dialog customDialog_5;
dialog customDialog_6;
dialog customDialog_7;
dialog customDialog_8;
dialog customDialog_9;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "templates\\HSLPipetteWizard.hsl" }
 namespace _Method { #include "HSLSchedCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    VISUAL_NTR_LIBRARY::_InitLibrary();
    NGSSTARPREP::_InitLibrary();
    NGSSTARPROCESSES::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    VectorCustomDialogs::Initialize();
    hhs1 = 1;
    hhs2 = 2;
    hhs3 = 3;
    HSLHamHeaterShaker::CreateUsbDevice(1, hhs1);
    HSLHamHeaterShaker::CreateUsbDevice(2, hhs2);
    HSLHamHeaterShaker::CreateUsbDevice(5, hhs3);
    HSLHamHeaterShaker::StartTempCtrl(hhs1, 4.0, 0);
    HSLHamHeaterShaker::StartTempCtrl(hhs2, 4.0, 0);
    HSLInhecoTECLib::Initialize(0, 0, t_strErrcode);
    HSLInhecoTECLib::SetTargetTemperature(0, 1, 4.0, t_strErrcode);
    HSLInhecoTECLib::StartTemperatureControl(0, 1, t_strErrcode);
    if(0){
      t_strODTCFolderXML = Translate("C:\\Users\\Boston University\\Desktop\\BU ODTC Scripts");
      t_strODTCFolderXML_init = StrConcat4(t_strODTCFolderXML, Translate("\\"), Translate("Init_25C.xml"), Translate(""));
      t_strDeviceAddressODTC = "192.168.1.50";
      t_strLocalIPAddressOfComputer = "192.168.1.10";
      NGSSTARPREP::ODTC_Init(t_strDeviceAddressODTC, t_intDeviceNumberODTC, t_strLocalIPAddressOfComputer);
      NGSSTARPREP::ODTC_DownloadProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML_init);
      NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
      NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML_init, Translate("Init_25C"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, t_blnShortenPreheat);
    }
    {
      loopCounter1 = 0;
      while (1 == 1)
      {
        loopCounter1 = loopCounter1 + 1;
        customDialog_2.InitCustomDialog("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");
        customDialog_2.ShowCustomDialog();
        retValueDialog = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
        t_intProcess1Selected = customDialog_2.GetCustomDialogProperty( "radioButton1.IsChecked" );
        t_intProcess2Selected = customDialog_2.GetCustomDialogProperty( "radioButton2.IsChecked" );
        t_intProcess3Selected = customDialog_2.GetCustomDialogProperty( "radioButton3.IsChecked" );
        t_intNumberofSamples = customDialog_2.GetCustomDialogProperty( "numeric1.Value" );
        t_strPCRMethodName = customDialog_2.GetCustomDialogProperty( "dropDown1.SelectedIndex" );
        if (retValueDialog == 2)
        {
          customDialog_1.InitCustomDialog("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");
          customDialog_1.ShowCustomDialog();
          retValueDialog2 = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
          if (retValueDialog2 == 6)
          {
            abort;
          }
          else
          {
          }
        }
        else
        {
          break;
        }
      }
    }
    if (t_strPCRMethodName == 1)
    {
      t_strPCRMethodName = Translate("PCR_58C");
    }
    else
    {
      if (t_strPCRMethodName == 2)
      {
        t_strPCRMethodName = Translate("PCR_62C");
      }
      else
      {
        if (t_strPCRMethodName == 3)
        {
          t_strPCRMethodName = Translate("PCR_66C");
        }
        else
        {
          if (t_strPCRMethodName == 4)
          {
            t_strPCRMethodName = Translate("PCR_70C");
          }
          else
          {
            if (t_strPCRMethodName == 5)
            {
              t_strPCRMethodName = Translate("PCR_72C");
            }
          }
        }
      }
    }
    Tips_50 = Translate("TipCounter_50ul");
    Tips_300 = Translate("TipCounter_300ul");
    Tips_1000 = Translate("TipCounter_1000ul");
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, Tips_50, Translate("Select the available 50ul Tips"), 0, 1000);
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Tips_300, Translate("Select the available 300ul Tips"), 0, 1000);
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Tips_1000, Translate("Select the available 1000ul Tips"), 0, 1000);
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, Tips_50, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, 1, ML_STAR.MlStar50ulTipWithFilter, 0, 7, 0, 0, Translate("Reload the 50ul Tips"), 0);
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Tips_300, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, 1, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0, 7, 0, 0, Translate("Reload the 300ul Tips"), 0);
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Tips_1000, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, 1, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0, 7, 0, 0, Translate("Reload the 1000ul Tips"), 0);
    t_strEnzyme_50ulLiquidClass = Translate("Illumina_DNAPrep_50F_EPM_SurfaceEmpty");
    t_strEnzyme_300ulLiquidClass = Translate("Illumina_DNAPrep_300F_EPM_SurfaceEmpty");
    ML_STAR.PCR_Plate.SetCount(t_intNumberofSamples);
    ML_STAR.HHS_PCRPostAmpPos.SetCount(t_intNumberofSamples);
    ML_STAR.HHS_PCR_CloningPlate.SetCount(t_intNumberofSamples);
    ML_STAR.CompetentCells.SetCount(t_intNumberofSamples);
    ML_STAR.TransformationPlate.SetCount(t_intNumberofSamples);
    t_int_IDTVolume = 1.5;
    t_intMasterMixTransferVolume = 8.5;
    t_intReversePrimer = 0.5;
    t_intForwardPrimer = 0.5;
    t_intDIWaterVolume = 2.5;
    t_intQ5_2XMastermixVolume = 5;
    t_intReversePrimer = t_intReversePrimer * t_intNumberofSamples;
    t_intForwardPrimer = t_intForwardPrimer * t_intNumberofSamples;
    t_intDIWaterVolume = t_intDIWaterVolume * t_intNumberofSamples;
    t_intQ5_2XMastermixVolume = t_intQ5_2XMastermixVolume * t_intNumberofSamples;
    t_intGelElectrophoresisVolume = 3;
    t_intDestinationVectorVolume = 1;
    t_intDestinationVectorVolume = t_intDestinationVectorVolume * t_intNumberofSamples;
    t_intGAMix2X_Volume = 2.5;
    t_intGATransfertoPCRVolume = 3.5;
    {
      loopCounter2 = 0;
      while (1 == 1)
      {
        loopCounter2 = loopCounter2 + 1;
        HSLInhecoTECLib::GetActualDeviceTemperature(0, 1, 1, t_fltCurrentTemp, t_strErrMessage);
        TrcTrace(t_fltCurrentTemp, Translate(""));
        if (t_fltCurrentTemp <= 4.0)
        {
          break;
        }
        hdl_CPAC_timer.SetTimerViewName("");
        if( 0 == hdl_CPAC_timer.SetTimer(30) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == hdl_CPAC_timer.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    {
      loopCounter2 = 0;
      while (1 == 1)
      {
        loopCounter2 = loopCounter2 + 1;
        HSLHamHeaterShaker::GetTemperature(hhs1, t_fltCurrentHHS1temp);
        TrcTrace(t_fltCurrentHHS1temp, Translate(""));
        if (t_fltCurrentTemp <= 4.0)
        {
          break;
        }
        hdl_HHS1_timer.SetTimerViewName("");
        if( 0 == hdl_HHS1_timer.SetTimer(30) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == hdl_HHS1_timer.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    {
      loopCounter2 = 0;
      while (1 == 1)
      {
        loopCounter2 = loopCounter2 + 1;
        HSLHamHeaterShaker::GetTemperature(hhs2, t_fltCurrentHHS2temp);
        TrcTrace(t_fltCurrentHHS2temp, Translate(""));
        if (t_fltCurrentTemp <= 4.0)
        {
          break;
        }
        hdl_HHS2_timer.SetTimerViewName("");
        if( 0 == hdl_HHS2_timer.SetTimer(30) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == hdl_HHS2_timer.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    if (t_intProcess1Selected == 1&& t_intProcess2Selected == 1&& t_intProcess3Selected == 1)
    {
      customDialog_4.InitCustomDialog("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");
      customDialog_4.ShowCustomDialog();
    }
    if (t_intProcess1Selected == 1&& t_intProcess2Selected == 0&& t_intProcess3Selected == 0)
    {
      customDialog_5.InitCustomDialog("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");
      customDialog_5.ShowCustomDialog();
    }
    if (t_intProcess1Selected == 1&& t_intProcess2Selected == 1&& t_intProcess3Selected == 0)
    {
      customDialog_6.InitCustomDialog("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");
      customDialog_6.ShowCustomDialog();
    }
    if (t_intProcess1Selected == 0&& t_intProcess2Selected == 1&& t_intProcess3Selected == 0)
    {
      customDialog_7.InitCustomDialog("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");
      customDialog_7.ShowCustomDialog();
    }
    if (t_intProcess1Selected == 0&& t_intProcess2Selected == 1&& t_intProcess3Selected == 1)
    {
      customDialog_8.InitCustomDialog("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");
      customDialog_8.ShowCustomDialog();
    }
    if (t_intProcess1Selected == 0&& t_intProcess2Selected == 0&& t_intProcess3Selected == 1)
    {
      customDialog_9.InitCustomDialog("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");
      customDialog_9.ShowCustomDialog();
    }
    if (t_intProcess1Selected == 1)
    {
      PCR();
    }
    if (t_intProcess2Selected == 1)
    {
      Gibson_Assembly();
    }
    if (t_intProcess3Selected == 1)
    {
      Transformation();
    }
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, Tips_50, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, 1, ML_STAR.MlStar50ulTipWithFilter, 0, 7, 0, 0, Translate("Reload the 50ul Tips"), 0);
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Tips_300, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, 1, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0, 7, 0, 0, Translate("Reload the 300ul Tips"), 0);
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, Tips_1000, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, 1, ML_STAR.MlStar1000ulHighVolumeTipWithFilter, 0, 7, 0, 0, Translate("Reload the 1000ul Tips"), 0);
    HSLHamHeaterShaker::Terminate();
    if(0){
      NGSSTARPREP::ODTC_StopProtocol(t_intDeviceNumberODTC, 1);
      NGSSTARPREP::ODTC_Terminate(t_intDeviceNumberODTC, 1);
    }
    HSLInhecoTECLib::StopTemperatureControl(0, 1, t_strErrcode);
    HSLInhecoTECLib::Terminate(1);
    VISUAL_NTR_LIBRARY::_ExitLibrary();
    NGSSTARPREP::_ExitLibrary();
    NGSSTARPROCESSES::_ExitLibrary();
  } }
