global device ML_STAR ("Cloning_v1.0.lay", "ML_STAR", hslTrue);
 namespace _Method { #include "Visual_NTR_library\\Visual_NTR_library.hs_" }
 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "C:\\Program Files (x86)\\Hamilton\\NGSStar\\Illumina\\DNAPrep\\Library\\NGSStarPrep.hs_" }
 namespace _Method { #include "C:\\Program Files (x86)\\Hamilton\\NGSStar\\Illumina\\DNAPrep\\Library\\NGSStarProcesses.hs_" }
 namespace _Method { #include "..\\HSLUtilLib2.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
#include "~ReCC7B.res"
variable t_intProcess3Selected;
variable t_intProcess2Selected;
variable retValueDialog;
variable t_intProcess1Selected;
variable t_intAnnelingTemp;
variable t_intNumberofSamples;
dialog customDialog_1;
variable loopCounter1;
variable retValueDialog2;
dialog customDialog_2;
sequence default;
variable t_intForwardPrimer;
variable t_intQ5_2XMastermixVolume;
variable t_intDIWaterVolume;
variable t_intReversePrimer;
variable t_int_IDTVolume;
variable t_intMasterMixTransferVolume;
dialog customDialog_3;
variable t_strChannelPattern;
variable t_strLocalIPAddressOfComputer;
variable t_intDeviceNumberODTC;
variable t_strODTCFolderXML;
variable t_strODTCDirectory;
variable t_strDeviceAddressODTC;
variable t_str_PlatformUsed;
variable t_strHamiltonDirectory;
variable t_str_KitTitle;
variable t_str_KitSupplier;
global variable t_intGelElectrophoresisVolume;
global variable hhs1;
global variable hhs2;
global variable t_intGATransferVolume;
global variable Tips_50;
global variable Tips_300;
variable t_intDestinationVectorVolume;
variable t_intGAMix2X_Volume;
variable t_intGATransfertoPCRVolume;
variable hhs3;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "templates\\HSLPipetteWizard.hsl" }
 namespace _Method { #include "HSLSchedCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    VISUAL_NTR_LIBRARY::_InitLibrary();
    NGSSTARPREP::_InitLibrary();
    NGSSTARPROCESSES::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    hhs1 = 1;
    hhs2 = 2;
    hhs3 = 3;
    HSLHamHeaterShaker::CreateUsbDevice(1, hhs1);
    HSLHamHeaterShaker::CreateUsbDevice(2, hhs2);
    HSLHamHeaterShaker::CreateUsbDevice(3, hhs3);
    {
      loopCounter1 = 0;
      while (1 == 1)
      {
        loopCounter1 = loopCounter1 + 1;
        customDialog_2.InitCustomDialog("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");
        customDialog_2.ShowCustomDialog();
        retValueDialog = customDialog_2.GetCustomDialogProperty( "ReturnValue" );
        t_intProcess1Selected = customDialog_2.GetCustomDialogProperty( "radioButton1.IsChecked" );
        t_intProcess2Selected = customDialog_2.GetCustomDialogProperty( "radioButton2.IsChecked" );
        t_intProcess3Selected = customDialog_2.GetCustomDialogProperty( "radioButton3.IsChecked" );
        t_intNumberofSamples = customDialog_2.GetCustomDialogProperty( "numeric1.Value" );
        t_intAnnelingTemp = customDialog_2.GetCustomDialogProperty( "numeric2.Value" );
        if (retValueDialog == 2)
        {
          customDialog_1.InitCustomDialog("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");
          customDialog_1.ShowCustomDialog();
          retValueDialog2 = customDialog_1.GetCustomDialogProperty( "ReturnValue" );
          if (retValueDialog2 == 6)
          {
            abort;
          }
          else
          {
            break;
          }
        }
      }
    }
    HSLHamHeaterShaker::StartTempCtrl(hhs1, 4.0, 1);
    HSLHamHeaterShaker::StartTempCtrl(hhs2, 4.0, 1);
    Tips_50 = Translate("TipCounter_50ul");
    Tips_300 = Translate("TipCounter_300ul");
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, Tips_50, Translate("Select the available 50ul Tips"), 0, 1000);
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Tips_300, Translate("Select the available 300ul Tips"), 0, 1000);
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, Tips_50, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, 1, ML_STAR.MlStar50ulTipWithFilter, 0, 7, 0, 0, Translate("Reload the 50ul Tips"), 0);
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Tips_300, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, 1, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0, 7, 0, 0, Translate("Reload the 300ul Tips"), 0);
    ML_STAR.PCR_Plate.SetCount(t_intNumberofSamples);
    t_int_IDTVolume = 1.5;
    t_intMasterMixTransferVolume = 8.5;
    t_intReversePrimer = 0.5;
    t_intForwardPrimer = 0.5;
    t_intDIWaterVolume = 2.5;
    t_intQ5_2XMastermixVolume = 5;
    t_intReversePrimer = t_intReversePrimer * t_intNumberofSamples * 0.1;
    t_intForwardPrimer = t_intForwardPrimer * t_intNumberofSamples * 0.1;
    t_intDIWaterVolume = t_intDIWaterVolume * t_intNumberofSamples * 0.1;
    t_intQ5_2XMastermixVolume = t_intQ5_2XMastermixVolume * t_intNumberofSamples * 0.1;
    t_intGelElectrophoresisVolume = 3;
    t_intGATransferVolume = 1.5;
    t_intDestinationVectorVolume = 1;
    t_intGAMix2X_Volume = 2.5;
    t_intGATransfertoPCRVolume = 3.5;
    t_strChannelPattern = Translate("11111111");
    t_strODTCDirectory = Translate("Files\\ODTC_scripts\\");
    t_strODTCDirectory = StrConcat12(t_strHamiltonDirectory, t_str_PlatformUsed, Translate("\\"), t_str_KitSupplier, Translate("\\"), t_str_KitTitle, Translate("\\"), t_strODTCDirectory, Translate(""), Translate(""), Translate(""), Translate(""));
    t_strODTCFolderXML = StrConcat2(t_strODTCDirectory, Translate("DNAPrep_GINIT.xml"));
    t_strDeviceAddressODTC = "192.168.1.50";
    t_strLocalIPAddressOfComputer = "192.168.1.10";
    NGSSTARPREP::ODTC_Init(t_strDeviceAddressODTC, t_intDeviceNumberODTC, t_strLocalIPAddressOfComputer);
    if (t_intProcess1Selected == 1)
    {
      PCR();
    }
    if (t_intProcess2Selected == 1)
    {
      Gibson_Assembly();
    }
    if (t_intProcess3Selected == 1)
    {
      Transformation();
    }
    customDialog_3.InitCustomDialog("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");
    customDialog_3.ShowCustomDialog();
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, Tips_50, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, 1, ML_STAR.MlStar50ulTipWithFilter, 0, 7, 0, 0, Translate("Reload the 50ul Tips"), 0);
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Tips_300, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, 1, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0, 7, 0, 0, Translate("Reload the 300ul Tips"), 0);
    VISUAL_NTR_LIBRARY::_ExitLibrary();
    NGSSTARPREP::_ExitLibrary();
    NGSSTARPROCESSES::_ExitLibrary();
  } }
