private function Gibson_Assembly(  ) void ;
private function PCR(  ) void ;
private function Transformation(  ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.MlStar50ulTipWithFilter, Tips_50, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, 1, ML_STAR.MlStar50ulTipWithFilter, 0, 7, 0, 0, Translate("Reload the 50ul Tips"), 0);
  VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, Tips_300, default, ML_STAR.COREGripTool_OnWaste_1000ul_0001, 1, 1, 1, ML_STAR.MlStar300ulStandardVolumeTipWithFilter, 0, 7, 0, 0, Translate("Reload the 300ul Tips"), 0);
}

private function PCR(  ) void {
  private variable t_fltReversePrimer;
  private variable t_fltForwardPrimer;
  private variable t_intMixVolume;
  private variable loopCounter2;
  private variable t_intDeviceNumberODTC;
  private variable t_strODTCFolderXML;
  private variable t_intRequestIDForActiveProtocol;
  private variable t_intTimeForProtocol;
  private sequence t_trpHamiltonComfortLidODTC;
  private sequence t_trpStack_HamiltonComfortLids;
  private variable t_intGelElectrophoresisVolume;
  MECC::TraceComment("Group start - IDT Template Addition");
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  MECC::TraceComment("Group end - IDT Template Addition");
  MECC::TraceComment("Group start - MasterMix Creation");
  MECC::TraceComment(Translate("++++++++++++++++++++ DI Water ++++++++++++++++++++++"));
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  MECC::TraceComment(Translate("++++++++++++++++++++ Forward Primer ++++++++++++++++++++++"));
  if (t_intNumberofSamples > 90)
  {
    t_fltForwardPrimer = t_fltForwardPrimer / (2 * 1.0);
  }
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  if (t_intNumberofSamples > 90)
  {
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  MECC::TraceComment(Translate("++++++++++++++++++++ Reverse Primer ++++++++++++++++++++++"));
  if (t_intNumberofSamples > 90)
  {
    t_fltReversePrimer = t_fltReversePrimer / (2 * 1.0);
  }
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  if (t_intNumberofSamples > 90)
  {
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  }
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  MECC::TraceComment(Translate("++++++++++++++++++++ Q5 2x MasterMix ++++++++++++++++++++++"));
  t_intQ5_2XMastermixVolume = t_intMixVolume;
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  MECC::TraceComment("Group end - MasterMix Creation");
  MECC::TraceComment("Group start - Addition to PCR Plate and 30s Shake");
  {
    loopCounter2 = 0;
    while (
       (ML_STAR.PCR_Plate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.MasterMix_Tube, 1, ML_STAR.MlStar50ulTipWithFilter, 1, ML_STAR.PCR_Plate, 1);
      loopCounter2 = loopCounter2 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (ML_STAR.PCR_Plate.GetCurrentPosition() > 0 && ML_STAR.PCR_Plate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.MasterMix_Tube.SetMax(ML_STAR.MasterMix_Tube.GetTotal());
    ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
    ML_STAR.PCR_Plate.SetMax(ML_STAR.PCR_Plate.GetTotal());
    ML_STAR.MasterMix_Tube.SetCurrentPosition(1);
    ML_STAR.PCR_Plate.SetCurrentPosition(1);
  }
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  HSLHamHeaterShaker::StartShakerTimed(hhs1, 700, 30);
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  MECC::TraceComment("Group end - Addition to PCR Plate and 30s Shake");
  ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
  ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
  MECC::TraceComment("Group start - ODTC steps");
  NGSSTARPREP::ODTC_WaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
  NGSSTARPREP::ODTC_OpenDoor(t_intDeviceNumberODTC);
  ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
  Util2::Debug::TraceSequence(t_trpStack_HamiltonComfortLids);
  ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
  NGSSTARPREP::ODTC_CloseDoor(t_intDeviceNumberODTC);
  NGSSTARPREP::ODTC_ExecuteProtocol(t_intDeviceNumberODTC, t_strODTCFolderXML, Translate("DNAPrep_TAG"), t_intTimeForProtocol, t_intRequestIDForActiveProtocol, 1);
  NGSSTARPREP::ODTC_ReadTemperatureAndWaitForStartedProtocolToFinish(t_intDeviceNumberODTC, t_intTimeForProtocol, t_intRequestIDForActiveProtocol);
  ML_STAR._CC819D7A_5DD8_4d13_A921_D74A06460F9E("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"); // GetPlate
  ML_STAR._E34155E5_7529_4b6b_AE3E_CDDA40789D55("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"); // PutPlate
  MECC::TraceComment("Group start - Adding 3uL of Amplified DNA to new plate for gel electrophoresis");
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  MECC::TraceComment("Group end - Adding 3uL of Amplified DNA to new plate for gel electrophoresis");
  MECC::TraceComment("Group end - ODTC steps");
}

private function Gibson_Assembly(  ) void {
  private dialog customDialog_1;
  private variable t_intDestinationVectorVolume;
  private variable loopCounter3;
  private timer hdl_IncubationTimer1;
  MECC::TraceComment("Group start - Adding 1.5uL of Amplified DNA to new plate for Cloning");
  ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
  ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
  ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
  ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  MECC::TraceComment("Group end - Adding 1.5uL of Amplified DNA to new plate for Cloning");
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  customDialog_1.InitCustomDialog("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");
  customDialog_1.ShowCustomDialog();
  HSLHamHeaterShaker::StartTempCtrl(hhs1, 50, 1);
  HSLHamHeaterShaker::StartTempCtrl(hhs3, 4, 1);
  MECC::TraceComment("Group start - Master Mix Creation");
  MECC::TraceComment(Translate("++++++++++++++++++++ Destination Vector ++++++++++++++++++++++"));
  if (t_intDestinationVectorVolume <= 50)
  {
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  else
  {
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  MECC::TraceComment(Translate("++++++++++++++++++++ 2x Gibson Assembly Mix ++++++++++++++++++++++"));
  if (t_intGAMix2X_Volume <= 50)
  {
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  else
  {
    ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  MECC::TraceComment("Group end - Master Mix Creation");
  {
    loopCounter3 = 0;
    while (
       (ML_STAR.HHS_PCR_CloningPlate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.GA_MasterMix, 1, ML_STAR.HHS_PCR_CloningPlate, 1, ML_STAR.MlStar50ulTipWithFilter, 1);
      loopCounter3 = loopCounter3 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (ML_STAR.HHS_PCR_CloningPlate.GetCurrentPosition() > 0 && ML_STAR.HHS_PCR_CloningPlate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.GA_MasterMix.SetMax(ML_STAR.GA_MasterMix.GetTotal());
    ML_STAR.HHS_PCR_CloningPlate.SetMax(ML_STAR.HHS_PCR_CloningPlate.GetTotal());
    ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
    ML_STAR.GA_MasterMix.SetCurrentPosition(1);
    ML_STAR.HHS_PCR_CloningPlate.SetCurrentPosition(1);
  }
  HSLHamHeaterShaker::WaitForTempCtrl(hhs1);
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  hdl_IncubationTimer1.SetTimerViewName("");
  if( 0 == hdl_IncubationTimer1.SetTimer(3600) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == hdl_IncubationTimer1.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
}

private function Transformation(  ) void {
  private variable loopCounter4;
  private timer hdl_IncubationTimer2;
  private timer hdl_IncubationTimer3;
  private timer hdl_IncubationTimer4;
  HSLHamHeaterShaker::StopTempCtrl(hhs1);
  HSLHamHeaterShaker::StartTempCtrl(hhs1, 42, 1);
  {
    loopCounter4 = 0;
    while (
       (ML_STAR.CompetentCells.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.CompetentCells, 1, ML_STAR.DW_HHS_1, 1, ML_STAR.MlStar50ulTipWithFilter, 1);
      loopCounter4 = loopCounter4 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (ML_STAR.CompetentCells.GetCurrentPosition() > 0 && ML_STAR.CompetentCells.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.CompetentCells.SetMax(ML_STAR.CompetentCells.GetTotal());
    ML_STAR.DW_HHS_1.SetMax(ML_STAR.DW_HHS_1.GetTotal());
    ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
    ML_STAR.CompetentCells.SetCurrentPosition(1);
    ML_STAR.DW_HHS_1.SetCurrentPosition(1);
  }
  hdl_IncubationTimer2.SetTimerViewName("");
  if( 0 == hdl_IncubationTimer2.SetTimer(1800) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == hdl_IncubationTimer2.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("Heat Shock at 42C for 30s"));
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  hdl_IncubationTimer3.SetTimerViewName("");
  if( 0 == hdl_IncubationTimer3.SetTimer(30) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 == hdl_IncubationTimer3.WaitTimer(hslTrue, hslTrue) )
  {
        MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  MECC::TraceComment(Translate("Back to cold for 3mins"));
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  hdl_IncubationTimer4.SetTimerViewName("");
  if( 0 == hdl_IncubationTimer4.SetTimer(180) )
  {
        MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  {
    loopCounter4 = 0;
    while (
       (ML_STAR.CompetentCells.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, ML_STAR.CompetentCells, 1, ML_STAR.DW_HHS_1, 1, ML_STAR.MlStar50ulTipWithFilter, 1);
      loopCounter4 = loopCounter4 + 1;
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      if (
         (ML_STAR.CompetentCells.GetCurrentPosition() > 0 && ML_STAR.CompetentCells.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    ML_STAR.CompetentCells.SetMax(ML_STAR.CompetentCells.GetTotal());
    ML_STAR.DW_HHS_1.SetMax(ML_STAR.DW_HHS_1.GetTotal());
    ML_STAR.MlStar50ulTipWithFilter.SetMax(ML_STAR.MlStar50ulTipWithFilter.GetTotal());
    ML_STAR.CompetentCells.SetCurrentPosition(1);
    ML_STAR.DW_HHS_1.SetCurrentPosition(1);
  }
}
