 namespace _Method { #include "HslHamHeaterShakerLib.hsl" }
 namespace _Method { #include "ASWStandard\\ASWGlobal\\ASWGlobal.hsl" }
#include "Zyppy_Modified_Layout_v2.0.res"
variable Zyppy_varHHS1;
variable Zyppy_varHHS2;
dialog customDialog_1;
dialog customDialog_2;
variable Zyppy_var_Sample_Number;
variable Zyppy_bol_Deep_Blue_Lysis_Step;
dialog customDialog_3;
dialog customDialog_4;
variable Zyppy_MagClearing_Beads_Vortex_Duration;
variable Zyppy_MagClearing_Beads_Volume;
variable Zyppy_Neutralization_Buffer_Volume;
variable Zyppy_MagClearing_Beads_Magnet_Supernatant_Transfer_Volume;
variable Zyppy_Deep_Blue_Lysis_Buffer_Incubation_Duration;
variable Zyppy_Deep_Blue_Lysis_Buffer_Volume;
variable Zyppy_Neutralization_Buffer_Vortex_Duration;
variable Zyppy_Deep_Blue_Lysis_Buffer_Vortex_Duration;
variable Zyppy_MagClearing_Beads_Magnet_Incubation_Duration;
variable loopCounter4;
variable Zyppy_MagClearing_Beads_Magnet_Supernatant_Transfer_Height;
timer timer1;
variable loopCounter5;
variable loopCounter7;
variable loopCounter6;
timer timer2;
variable loopCounter8;
variable Zyppy_MagBinding_Beads_Supernatant_Removal_Volume;
variable Zyppy_MagBinding_Beads_Volume;
variable Zyppy_MagBinding_Beads_Vortex_Duration;
variable Zyppy_MagBinding_Beads_Magnet_Incubation_Duration;
variable Zyppy_MagBinding_Beads_Vortex_Total_Duration;
variable Zyppy_MagBinding_Beads_Vortex_Incubation_Duration;
timer timer3;
variable Zyppy_Endo_Wash_Buffer_Magnet_Incubation_Duration;
variable Zyppy_Endo_Wash_Buffer_Volume;
variable Zyppy_Endo_Wash_Buffer_Vortex_Duration;
variable Zyppy_Endo_Wash_Buffer_Supernatant_Removal_Volume;
timer timer4;
variable Zyppy_Zyppy_Wash_Buffer_Volume;
variable Zyppy_Zyppy_Wash_Buffer_Supernatant_Removal_Volume;
variable Zyppy_Zyppy_Wash_Buffer_Magnet_Incubation_Duration;
variable Zyppy_Zyppy_Wash_Buffer_Vortex_Duration;
variable loopCounter9;
variable Zyppy_Elution_Buffer_Magnet_Incubation_Duration;
variable Zyppy_Elution_Buffer_Vortex_Loop_Recursion_Amount;
variable Zyppy_Drying_Time_Duration;
variable Zyppy_Elution_Buffer_Volume;
variable Zyppy_Elution_Buffer_Elution_Plate_Transfer_Volume;
variable Zyppy_Elution_Buffer_Incubation_Temperature;
variable Zyppy_Elution_Buffer_Vortex_Intermittent_Vortex_Duration;
variable Zyppy_Elution_Buffer_Vortex_Intermittent_Incubation_Duration;
variable Zyppy_Elution_Buffer_Vortex_Duration;
timer timer5;
timer timer6;
timer timer7;
timer timer8;
dialog customDialog_5;
dialog customDialog_6;
dialog customDialog_7;
global device ML_STAR ("Zyppy_Modified_Layout_v2.0.lay", "ML_STAR", hslTrue);
variable t_fltMagClearingTotalVolume;
variable t_fltMagBindingTotalVolume;
variable t_fltEBTotalVolume;
variable t_intRemainingPositions;
dialog customDialog_8;
dialog customDialog_9;
dialog customDialog_10;
variable t_intNeutralizationBufferVolume;
variable t_intZyppyWashBufferVolume;
variable t_intDeepBlueLysisBufferVolume;
variable t_intEndoWashBufferVolume;
dialog customDialog_11;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "templates\\HSLPipetteWizard.hsl" }
 namespace _Method { #include "HSLSchedCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ML_STAR._EA251BFB_66DE_48D1_83E5_6884B4DD8D11("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"); // MoveAutoLoad
    Zyppy_varHHS1 = Translate("HHS1");
    Zyppy_varHHS2 = Translate("HHS2");
    HSLHamHeaterShaker::CreateUsbDevice(3, Zyppy_varHHS1);
    HSLHamHeaterShaker::CreateUsbDevice(5, Zyppy_varHHS2);
    HSLHamHeaterShaker::StartTempCtrl(Zyppy_varHHS1, 22, 0);
    HSLHamHeaterShaker::StartTempCtrl(Zyppy_varHHS2, 22, 0);
    if(0){
      MECC::TraceComment("Group start - (1) PROTOCOL PREPARATION\nReagent and Consumable Preparation\nSample Number Selection\n");
      customDialog_8.InitCustomDialog("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");
      customDialog_8.ShowCustomDialog();
      Zyppy_var_Sample_Number = customDialog_8.GetCustomDialogProperty( "numeric1.Value" );
      Zyppy_bol_Deep_Blue_Lysis_Step = customDialog_8.GetCustomDialogProperty( "checkBox1.IsChecked" );
      customDialog_2.InitCustomDialog("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");
      customDialog_2.ShowCustomDialog();
      customDialog_1.InitCustomDialog("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");
      customDialog_1.ShowCustomDialog();
      customDialog_4.InitCustomDialog("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");
      customDialog_4.ShowCustomDialog();
      ML_STAR.Zyppy_Magnet_Deep_Well_Plate.SetCount(Zyppy_var_Sample_Number);
      ML_STAR.Zyppy_Collection_Plate.SetCount(Zyppy_var_Sample_Number);
      ML_STAR.Zyppy_Elution_Plate.SetCount(Zyppy_var_Sample_Number);
      ML_STAR.Zyppy_Magnet_MIDI_Plate.SetCount(Zyppy_var_Sample_Number);
      t_fltMagClearingTotalVolume = Zyppy_var_Sample_Number * 50 / (4 * 1.0) + 100;
      t_fltMagBindingTotalVolume = Zyppy_var_Sample_Number * 30 / (4 * 1.0) + 100;
      t_fltEBTotalVolume = Zyppy_var_Sample_Number * 40 / (4 * 1.0) + 100;
      t_intDeepBlueLysisBufferVolume = Zyppy_var_Sample_Number * 100 + 3000;
      t_intDeepBlueLysisBufferVolume = t_intDeepBlueLysisBufferVolume / (1000 * 1.0);
      t_intNeutralizationBufferVolume = Zyppy_var_Sample_Number * 450 + 3000;
      t_intNeutralizationBufferVolume = t_intNeutralizationBufferVolume / (1000 * 1.0);
      t_intEndoWashBufferVolume = Zyppy_var_Sample_Number * 200 + 3000;
      t_intEndoWashBufferVolume = t_intEndoWashBufferVolume / (1000 * 1.0);
      t_intZyppyWashBufferVolume = Zyppy_var_Sample_Number * 400 + 3000;
      t_intZyppyWashBufferVolume = t_intZyppyWashBufferVolume / (1000 * 1.0);
      MECC::TraceComment("Group end - (1) PROTOCOL PREPARATION\nReagent and Consumable Preparation\nSample Number Selection\n");
      MECC::TraceComment("Group start - (2) PROTOCOL (Deep Blue Lysis Buffer)\nOptional: Automated Deep Blue Lysis Buffer\n1. Remove Air-Permeable Seal\n2. Dispense 100 µL of Deep Blue Lysis Buffer to each well containing culture and vortex for 10 seconds. Let it sit for 5 minutes\n3. Add 450 µL of Neutralization Buffer and vortex for 45 seconds.\n4. Dispense 50 µL of MagClearing Beads and vortex for 10 seconds.\n5. Transfer 96-Well Block to a magnetic stand and allow to sit for 6 minutes. Transfer 750 µL of cleared lysate to a Collection Plate. ");
      if (Zyppy_bol_Deep_Blue_Lysis_Step == ASWGLOBAL::BOOL::TRUE)
      {
        MECC::TraceComment("Group start - Deep Blue Lysis Step Variable and Sequence Assignment");
        ML_STAR.Zyppy_Lysis_Plate.SetCount(Zyppy_var_Sample_Number);
        Zyppy_Deep_Blue_Lysis_Buffer_Volume = 100;
        Zyppy_Deep_Blue_Lysis_Buffer_Vortex_Duration = 300;
        Zyppy_Deep_Blue_Lysis_Buffer_Incubation_Duration = 300;
        Zyppy_Neutralization_Buffer_Volume = 450;
        Zyppy_Neutralization_Buffer_Vortex_Duration = 45;
        Zyppy_MagClearing_Beads_Volume = 50;
        Zyppy_MagClearing_Beads_Vortex_Duration = 10;
        Zyppy_MagClearing_Beads_Magnet_Incubation_Duration = 360;
        Zyppy_MagClearing_Beads_Magnet_Supernatant_Transfer_Volume = 700;
        Zyppy_MagClearing_Beads_Magnet_Supernatant_Transfer_Height = 10;
        MECC::TraceComment("Group end - Deep Blue Lysis Step Variable and Sequence Assignment");
        MECC::TraceComment("Group start - Hamilton Deck Set-Up\n1. Remove the 96-Well Block from the incubator and discard the Air-Permeable Sealing Cover.");
        customDialog_6.InitCustomDialog("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");
        customDialog_6.ShowCustomDialog();
        customDialog_7.InitCustomDialog("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");
        customDialog_7.SetCustomDialogProperty( "textBlock3.Text", t_fltMagClearingTotalVolume );
        customDialog_7.SetCustomDialogProperty( "textBlock4.Text", t_fltMagBindingTotalVolume );
        customDialog_7.SetCustomDialogProperty( "textBlock5.Text", t_fltEBTotalVolume );
        customDialog_7.ShowCustomDialog();
        customDialog_3.InitCustomDialog("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");
        customDialog_3.SetCustomDialogProperty( "textBlock8.Text", t_intDeepBlueLysisBufferVolume );
        customDialog_3.SetCustomDialogProperty( "textBlock9.Text", t_intNeutralizationBufferVolume );
        customDialog_3.SetCustomDialogProperty( "textBlock10.Text", t_intEndoWashBufferVolume );
        customDialog_3.SetCustomDialogProperty( "textBlock11.Text", t_intZyppyWashBufferVolume );
        customDialog_3.SetCustomDialogProperty( "textBlock12.Text", t_intZyppyWashBufferVolume );
        customDialog_3.ShowCustomDialog();
        MECC::TraceComment("Group end - Hamilton Deck Set-Up\n1. Remove the 96-Well Block from the incubator and discard the Air-Permeable Sealing Cover.");
        MECC::TraceComment("Group start - 2. Dispense 100 µL of Deep Blue Lysis Buffer to each well containing culture and vortex for 10 seconds. Let it sit for 5 minutes.");
        {
          loopCounter4 = 0;
          while (
             (ML_STAR.Zyppy_Lysis_Plate.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.Zyppy_Deep_Blue_Lysis_Buffer, 1, ML_STAR.Zyppy_Deep_Blue_Lysis_Buffer_300F_Tips, 1, ML_STAR.Zyppy_Lysis_Plate, 1);
            loopCounter4 = loopCounter4 + 1;
            {
              	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
            }
            if ( ML_STAR.Zyppy_Lysis_Plate.GetCurrentPosition() == 0 ) t_intRemainingPositions = 0;
            else t_intRemainingPositions = ML_STAR.Zyppy_Lysis_Plate.GetCount() - ML_STAR.Zyppy_Lysis_Plate.GetCurrentPosition() + 1;
            if (t_intRemainingPositions <= 8)
            {
              {
                	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
              }
            }
            else
            {
              {
                	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
              }
            }
            if (
               (ML_STAR.Zyppy_Lysis_Plate.GetCurrentPosition() > 0 && ML_STAR.Zyppy_Lysis_Plate.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.Zyppy_Deep_Blue_Lysis_Buffer.SetMax(ML_STAR.Zyppy_Deep_Blue_Lysis_Buffer.GetTotal());
          ML_STAR.Zyppy_Deep_Blue_Lysis_Buffer_300F_Tips.SetMax(ML_STAR.Zyppy_Deep_Blue_Lysis_Buffer_300F_Tips.GetTotal());
          ML_STAR.Zyppy_Lysis_Plate.SetMax(ML_STAR.Zyppy_Lysis_Plate.GetTotal());
          ML_STAR.Zyppy_Deep_Blue_Lysis_Buffer.SetCurrentPosition(1);
          ML_STAR.Zyppy_Deep_Blue_Lysis_Buffer_300F_Tips.SetCurrentPosition(1);
          ML_STAR.Zyppy_Lysis_Plate.SetCurrentPosition(1);
        }
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
        HSS_Shaking(Zyppy_varHHS2, 1600, Zyppy_Deep_Blue_Lysis_Buffer_Vortex_Duration);
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
        timer1.SetTimerViewName("");
        if( 0 == timer1.SetTimer(Zyppy_Deep_Blue_Lysis_Buffer_Incubation_Duration) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        MECC::TraceComment("Group end - 2. Dispense 100 µL of Deep Blue Lysis Buffer to each well containing culture and vortex for 10 seconds. Let it sit for 5 minutes.");
        MECC::TraceComment("Group start - 3. Dispense 450 µL of Neutralization Buffer and vorte for 45 seconds.");
        {
          loopCounter5 = 0;
          while (
             (ML_STAR.Zyppy_Lysis_Plate.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.Zyppy_Lysis_Plate, 1, ML_STAR.Zyppy_Neutralization_Buffer, 1, ML_STAR.Zyppy_Neutralization_Buffer_1000F_Tips, 1);
            loopCounter5 = loopCounter5 + 1;
            {
              	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
            }
            if ( ML_STAR.Zyppy_Lysis_Plate.GetCurrentPosition() == 0 ) t_intRemainingPositions = 0;
            else t_intRemainingPositions = ML_STAR.Zyppy_Lysis_Plate.GetCount() - ML_STAR.Zyppy_Lysis_Plate.GetCurrentPosition() + 1;
            if (t_intRemainingPositions <= 8)
            {
              {
                	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
              }
            }
            else
            {
              {
                	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
              }
            }
            if (
               (ML_STAR.Zyppy_Lysis_Plate.GetCurrentPosition() > 0 && ML_STAR.Zyppy_Lysis_Plate.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.Zyppy_Lysis_Plate.SetMax(ML_STAR.Zyppy_Lysis_Plate.GetTotal());
          ML_STAR.Zyppy_Neutralization_Buffer.SetMax(ML_STAR.Zyppy_Neutralization_Buffer.GetTotal());
          ML_STAR.Zyppy_Neutralization_Buffer_1000F_Tips.SetMax(ML_STAR.Zyppy_Neutralization_Buffer_1000F_Tips.GetTotal());
          ML_STAR.Zyppy_Lysis_Plate.SetCurrentPosition(1);
          ML_STAR.Zyppy_Neutralization_Buffer.SetCurrentPosition(1);
          ML_STAR.Zyppy_Neutralization_Buffer_1000F_Tips.SetCurrentPosition(1);
        }
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
        HSS_Shaking(Zyppy_varHHS2, 1100, Zyppy_Neutralization_Buffer_Vortex_Duration);
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
        MECC::TraceComment("Group end - 3. Dispense 450 µL of Neutralization Buffer and vorte for 45 seconds.");
        MECC::TraceComment("Group start - 4. Dispense 50 µL of MagClearing Beads and vortex for 10 seconds.");
        {
          loopCounter6 = 0;
          while (
             (ML_STAR.Zyppy_Lysis_Plate.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.Zyppy_Lysis_Plate, 1, ML_STAR.Zyppy_MagClearing_Beads, 1, ML_STAR.Zyppy_MagClearing_Beads_300F_Tips, 1);
            loopCounter6 = loopCounter6 + 1;
            {
              	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
            }
            if ( ML_STAR.Zyppy_Lysis_Plate.GetCurrentPosition() == 0 ) t_intRemainingPositions = 0;
            else t_intRemainingPositions = ML_STAR.Zyppy_Lysis_Plate.GetCount() - ML_STAR.Zyppy_Lysis_Plate.GetCurrentPosition() + 1;
            if (t_intRemainingPositions <= 8)
            {
              {
                	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
              }
            }
            else
            {
              {
                	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
              }
            }
            if (
               (ML_STAR.Zyppy_Lysis_Plate.GetCurrentPosition() > 0 && ML_STAR.Zyppy_Lysis_Plate.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.Zyppy_Lysis_Plate.SetMax(ML_STAR.Zyppy_Lysis_Plate.GetTotal());
          ML_STAR.Zyppy_MagClearing_Beads.SetMax(ML_STAR.Zyppy_MagClearing_Beads.GetTotal());
          ML_STAR.Zyppy_MagClearing_Beads_300F_Tips.SetMax(ML_STAR.Zyppy_MagClearing_Beads_300F_Tips.GetTotal());
          ML_STAR.Zyppy_Lysis_Plate.SetCurrentPosition(1);
          ML_STAR.Zyppy_MagClearing_Beads.SetCurrentPosition(1);
          ML_STAR.Zyppy_MagClearing_Beads_300F_Tips.SetCurrentPosition(1);
        }
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
        HSS_Shaking(Zyppy_varHHS2, 1100, Zyppy_MagClearing_Beads_Vortex_Duration);
        MECC::TraceComment("Group end - 4. Dispense 50 µL of MagClearing Beads and vortex for 10 seconds.");
        MECC::TraceComment("Group start - 5. Transfer 96-Well Block to a magnetic stand an allow to sit for 5 minutes while beads separate form the lysate. From a depth of about half the length of the well, aspirate and transfer 750 µL of cleared lysate to a collection Plate. Remove 96-Well Block from magnetic stand.");
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
        if( 0 == timer2.SetTimer(Zyppy_MagClearing_Beads_Magnet_Incubation_Duration) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer2.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if (Zyppy_var_Sample_Number == 96)
        {
          ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
          {
            	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
          }
          {
            	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
          }
        }
        else
        {
          {
            loopCounter7 = 0;
            while (
               (ML_STAR.Zyppy_Magnet_Deep_Well_Plate.GetCurrentPosition() > 0)
            )
            {
              AlignSequences(hslTrue, ML_STAR.Zyppy_Collection_Plate, 1, ML_STAR.Zyppy_Collection_Plate_Transfer_1000F_Tips, 1, ML_STAR.Zyppy_Magnet_Deep_Well_Plate, 1);
              loopCounter7 = loopCounter7 + 1;
              ML_STAR._B5EFA722_D37E_4962_AC12_D06E9B2530DD("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"); // OptimizeFollowSpeed
              {
                	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
              }
              {
                	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
              }
              if (
                 (ML_STAR.Zyppy_Magnet_Deep_Well_Plate.GetCurrentPosition() > 0 && ML_STAR.Zyppy_Magnet_Deep_Well_Plate.GetMax() == 0 )
              )
              { MECC::EndlessSequenceLoopWarning(GetFileName()); }
            }
            ML_STAR.Zyppy_Collection_Plate.SetMax(ML_STAR.Zyppy_Collection_Plate.GetTotal());
            ML_STAR.Zyppy_Collection_Plate_Transfer_1000F_Tips.SetMax(ML_STAR.Zyppy_Collection_Plate_Transfer_1000F_Tips.GetTotal());
            ML_STAR.Zyppy_Magnet_Deep_Well_Plate.SetMax(ML_STAR.Zyppy_Magnet_Deep_Well_Plate.GetTotal());
            ML_STAR.Zyppy_Collection_Plate.SetCurrentPosition(1);
            ML_STAR.Zyppy_Collection_Plate_Transfer_1000F_Tips.SetCurrentPosition(1);
            ML_STAR.Zyppy_Magnet_Deep_Well_Plate.SetCurrentPosition(1);
          }
        }
        {
          	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
        }
        MECC::TraceComment("Group end - 5. Transfer 96-Well Block to a magnetic stand an allow to sit for 5 minutes while beads separate form the lysate. From a depth of about half the length of the well, aspirate and transfer 750 µL of cleared lysate to a collection Plate. Remove 96-Well Block from magnetic stand.");
      }
      else
      {
        MECC::TraceComment("Group start - Hamilton Deck Set-Up\n1. Load 750 µL of cleared lysate to the Collection Plate and load the Hamilton");
        customDialog_9.InitCustomDialog("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");
        customDialog_9.ShowCustomDialog();
        customDialog_10.InitCustomDialog("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");
        customDialog_10.SetCustomDialogProperty( "textBlock4.Text", t_fltMagBindingTotalVolume );
        customDialog_10.SetCustomDialogProperty( "textBlock5.Text", t_fltEBTotalVolume );
        customDialog_10.ShowCustomDialog();
        customDialog_11.InitCustomDialog("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");
        customDialog_11.SetCustomDialogProperty( "textBlock10.Text", t_intEndoWashBufferVolume );
        customDialog_11.SetCustomDialogProperty( "textBlock11.Text", t_intZyppyWashBufferVolume );
        customDialog_11.SetCustomDialogProperty( "textBlock12.Text", t_intZyppyWashBufferVolume );
        customDialog_11.ShowCustomDialog();
        MECC::TraceComment("Group end - Hamilton Deck Set-Up\n1. Load 750 µL of cleared lysate to the Collection Plate and load the Hamilton");
      }
      MECC::TraceComment("Group end - (2) PROTOCOL (Deep Blue Lysis Buffer)\nOptional: Automated Deep Blue Lysis Buffer\n1. Remove Air-Permeable Seal\n2. Dispense 100 µL of Deep Blue Lysis Buffer to each well containing culture and vortex for 10 seconds. Let it sit for 5 minutes\n3. Add 450 µL of Neutralization Buffer and vortex for 45 seconds.\n4. Dispense 50 µL of MagClearing Beads and vortex for 10 seconds.\n5. Transfer 96-Well Block to a magnetic stand and allow to sit for 6 minutes. Transfer 750 µL of cleared lysate to a Collection Plate. ");
      MECC::TraceComment("Group start - (3) PROTOCOL (MagBinding Beads)\n1. Dispense 30 µL of MagBinding Beads to  each well of the Collection Plate.\n2. Transfer Plate to HSS and Vortex for 5 seconds every 30 seconds, for 10 minutes in total.\n3. Place on Magnet for 5 minutes\n4. Remove and discard supernatant");
      MECC::TraceComment("Group start - Magbinding Beads Step Variable and Sequence Assignment");
      Zyppy_MagBinding_Beads_Volume = 30;
      Zyppy_MagBinding_Beads_Vortex_Total_Duration = 600;
      Zyppy_MagBinding_Beads_Vortex_Duration = 5;
      Zyppy_MagBinding_Beads_Vortex_Incubation_Duration = 30;
      Zyppy_MagBinding_Beads_Magnet_Incubation_Duration = 300;
      Zyppy_MagBinding_Beads_Supernatant_Removal_Volume = 750;
      MECC::TraceComment("Group end - Magbinding Beads Step Variable and Sequence Assignment");
      MECC::TraceComment("Group start - 1. Dispense 30 µL of MagBinding Beads to each well of the Collection Plate");
      {
        loopCounter8 = 0;
        while (
           (ML_STAR.Zyppy_Collection_Plate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Zyppy_Collection_Plate, 1, ML_STAR.Zyppy_MagBinding_Beads, 1, ML_STAR.Zyppy_MagBinding_Beads_300F_Tips, 1);
          loopCounter8 = loopCounter8 + 1;
          {
            	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
          }
          if ( ML_STAR.Zyppy_Collection_Plate.GetCurrentPosition() == 0 ) t_intRemainingPositions = 0;
          else t_intRemainingPositions = ML_STAR.Zyppy_Collection_Plate.GetCount() - ML_STAR.Zyppy_Collection_Plate.GetCurrentPosition() + 1;
          if (t_intRemainingPositions <= 8)
          {
            {
              	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
            }
          }
          else
          {
            {
              	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
            }
          }
          if (
             (ML_STAR.Zyppy_Collection_Plate.GetCurrentPosition() > 0 && ML_STAR.Zyppy_Collection_Plate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Zyppy_Collection_Plate.SetMax(ML_STAR.Zyppy_Collection_Plate.GetTotal());
        ML_STAR.Zyppy_MagBinding_Beads.SetMax(ML_STAR.Zyppy_MagBinding_Beads.GetTotal());
        ML_STAR.Zyppy_MagBinding_Beads_300F_Tips.SetMax(ML_STAR.Zyppy_MagBinding_Beads_300F_Tips.GetTotal());
        ML_STAR.Zyppy_Collection_Plate.SetCurrentPosition(1);
        ML_STAR.Zyppy_MagBinding_Beads.SetCurrentPosition(1);
        ML_STAR.Zyppy_MagBinding_Beads_300F_Tips.SetCurrentPosition(1);
      }
      MECC::TraceComment("Group end - 1. Dispense 30 µL of MagBinding Beads to each well of the Collection Plate");
      MECC::TraceComment("Group start - 2. Transfer Plate to HSS and Vortex for 5 seconds every 30 seconds, for 10 minutes in total.");
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      MagBinding_Bead_HSS_Shaker(Zyppy_MagBinding_Beads_Vortex_Total_Duration, Zyppy_MagBinding_Beads_Vortex_Incubation_Duration, Zyppy_MagBinding_Beads_Vortex_Duration, Zyppy_varHHS1, 1100);
      MECC::TraceComment("Group end - 2. Transfer Plate to HSS and Vortex for 5 seconds every 30 seconds, for 10 minutes in total.");
      MECC::TraceComment("Group start - 3. Place on Magnet for 5 minutes");
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      if( 0 == timer3.SetTimer(Zyppy_MagBinding_Beads_Magnet_Incubation_Duration) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer3.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      MECC::TraceComment("Group end - 3. Place on Magnet for 5 minutes");
      MECC::TraceComment("Group start - 4. Remove and discard supernatant. Remove 96-Well Block from magnetic stand");
      if (Zyppy_var_Sample_Number == 96)
      {
        {
          	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
        }
        {
          	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
        }
      }
      else
      {
        {
          loopCounter7 = 0;
          while (
             (ML_STAR.Zyppy_Magnet_MIDI_Plate.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.Zyppy_96_Gravity_Waste, 1, ML_STAR.Zyppy_MagBinding_Beads_Supernatant_Removal_1000F_Tips, 1, ML_STAR.Zyppy_Magnet_MIDI_Plate, 1);
            loopCounter7 = loopCounter7 + 1;
            {
              	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
            }
            {
              	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
            }
            if (
               (ML_STAR.Zyppy_Magnet_MIDI_Plate.GetCurrentPosition() > 0 && ML_STAR.Zyppy_Magnet_MIDI_Plate.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.Zyppy_96_Gravity_Waste.SetMax(ML_STAR.Zyppy_96_Gravity_Waste.GetTotal());
          ML_STAR.Zyppy_MagBinding_Beads_Supernatant_Removal_1000F_Tips.SetMax(ML_STAR.Zyppy_MagBinding_Beads_Supernatant_Removal_1000F_Tips.GetTotal());
          ML_STAR.Zyppy_Magnet_MIDI_Plate.SetMax(ML_STAR.Zyppy_Magnet_MIDI_Plate.GetTotal());
          ML_STAR.Zyppy_96_Gravity_Waste.SetCurrentPosition(1);
          ML_STAR.Zyppy_MagBinding_Beads_Supernatant_Removal_1000F_Tips.SetCurrentPosition(1);
          ML_STAR.Zyppy_Magnet_MIDI_Plate.SetCurrentPosition(1);
        }
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      MECC::TraceComment("Group end - 4. Remove and discard supernatant. Remove 96-Well Block from magnetic stand");
      MECC::TraceComment("Group end - (3) PROTOCOL (MagBinding Beads)\n1. Dispense 30 µL of MagBinding Beads to  each well of the Collection Plate.\n2. Transfer Plate to HSS and Vortex for 5 seconds every 30 seconds, for 10 minutes in total.\n3. Place on Magnet for 5 minutes\n4. Remove and discard supernatant");
      MECC::TraceComment("Group start - (4) PROTOCOL (Endo-Wash Buffer)\n1. Dispense 200 µL of Endo-Wash Buffer to each well of the plate.\n2. Transfer to HHS and Vortex for 30 seconds to re-suspend beads.\n3. Transfer Collection Plate to magnetic stand and incubate for 2 minutes.\n4. Remove and discard Supernatant. Remove 96-Well Block from magnetic stand. ");
      MECC::TraceComment("Group start - Endo Wash Buffer Step Variable and Sequence Assignment");
      Zyppy_Endo_Wash_Buffer_Volume = 200;
      Zyppy_Endo_Wash_Buffer_Vortex_Duration = 30;
      Zyppy_Endo_Wash_Buffer_Magnet_Incubation_Duration = 120;
      Zyppy_Endo_Wash_Buffer_Supernatant_Removal_Volume = 250;
      MECC::TraceComment("Group end - Endo Wash Buffer Step Variable and Sequence Assignment");
      MECC::TraceComment("Group start - 1. Dispense 200 µL of Endo-Wash Buffer to each well of the plate.");
      {
        loopCounter8 = 0;
        while (
           (ML_STAR.Zyppy_Collection_Plate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Zyppy_Collection_Plate, 1, ML_STAR.Zyppy_Endo_Wash_Buffer, 1, ML_STAR.Zyppy_Endo_Wash_Buffer_Transfer_300F_Tips, 1);
          loopCounter8 = loopCounter8 + 1;
          {
            	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
          }
          if ( ML_STAR.Zyppy_Collection_Plate.GetCurrentPosition() == 0 ) t_intRemainingPositions = 0;
          else t_intRemainingPositions = ML_STAR.Zyppy_Collection_Plate.GetCount() - ML_STAR.Zyppy_Collection_Plate.GetCurrentPosition() + 1;
          if (t_intRemainingPositions <= 8)
          {
            {
              	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
            }
          }
          else
          {
            {
              	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
            }
          }
          if (
             (ML_STAR.Zyppy_Collection_Plate.GetCurrentPosition() > 0 && ML_STAR.Zyppy_Collection_Plate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Zyppy_Collection_Plate.SetMax(ML_STAR.Zyppy_Collection_Plate.GetTotal());
        ML_STAR.Zyppy_Endo_Wash_Buffer.SetMax(ML_STAR.Zyppy_Endo_Wash_Buffer.GetTotal());
        ML_STAR.Zyppy_Endo_Wash_Buffer_Transfer_300F_Tips.SetMax(ML_STAR.Zyppy_Endo_Wash_Buffer_Transfer_300F_Tips.GetTotal());
        ML_STAR.Zyppy_Collection_Plate.SetCurrentPosition(1);
        ML_STAR.Zyppy_Endo_Wash_Buffer.SetCurrentPosition(1);
        ML_STAR.Zyppy_Endo_Wash_Buffer_Transfer_300F_Tips.SetCurrentPosition(1);
      }
      MECC::TraceComment("Group end - 1. Dispense 200 µL of Endo-Wash Buffer to each well of the plate.");
      MECC::TraceComment("Group start - 2. Transfer to HHS and Vortex for 30 seconds to re-suspend beads.");
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      HSS_Shaking(Zyppy_varHHS1, 1100, Zyppy_Endo_Wash_Buffer_Vortex_Duration);
      MECC::TraceComment("Group end - 2. Transfer to HHS and Vortex for 30 seconds to re-suspend beads.");
      MECC::TraceComment("Group start - 3. Transfer Collection Plate to magnetic stand and incubate for 2 minutes.");
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      if( 0 == timer4.SetTimer(Zyppy_Endo_Wash_Buffer_Magnet_Incubation_Duration) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer4.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      MECC::TraceComment("Group end - 3. Transfer Collection Plate to magnetic stand and incubate for 2 minutes.");
      MECC::TraceComment("Group start - 4. Remove and discard Supernatant. Remove 96-Well Block from magnetic stand. ");
      if (Zyppy_var_Sample_Number == 96)
      {
        {
          	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
        }
        {
          	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
        }
      }
      else
      {
        {
          loopCounter7 = 0;
          while (
             (ML_STAR.Zyppy_Magnet_MIDI_Plate.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.Zyppy_96_Gravity_Waste, 1, ML_STAR.Zyppy_Endo_Wash_Buffer_Transfer_300F_Tips, 1, ML_STAR.Zyppy_Magnet_MIDI_Plate, 1);
            loopCounter7 = loopCounter7 + 1;
            {
              	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
            }
            {
              	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
            }
            if (
               (ML_STAR.Zyppy_Magnet_MIDI_Plate.GetCurrentPosition() > 0 && ML_STAR.Zyppy_Magnet_MIDI_Plate.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.Zyppy_96_Gravity_Waste.SetMax(ML_STAR.Zyppy_96_Gravity_Waste.GetTotal());
          ML_STAR.Zyppy_Endo_Wash_Buffer_Transfer_300F_Tips.SetMax(ML_STAR.Zyppy_Endo_Wash_Buffer_Transfer_300F_Tips.GetTotal());
          ML_STAR.Zyppy_Magnet_MIDI_Plate.SetMax(ML_STAR.Zyppy_Magnet_MIDI_Plate.GetTotal());
          ML_STAR.Zyppy_96_Gravity_Waste.SetCurrentPosition(1);
          ML_STAR.Zyppy_Endo_Wash_Buffer_Transfer_300F_Tips.SetCurrentPosition(1);
          ML_STAR.Zyppy_Magnet_MIDI_Plate.SetCurrentPosition(1);
        }
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      MECC::TraceComment("Group end - 4. Remove and discard Supernatant. Remove 96-Well Block from magnetic stand. ");
      MECC::TraceComment("Group end - (4) PROTOCOL (Endo-Wash Buffer)\n1. Dispense 200 µL of Endo-Wash Buffer to each well of the plate.\n2. Transfer to HHS and Vortex for 30 seconds to re-suspend beads.\n3. Transfer Collection Plate to magnetic stand and incubate for 2 minutes.\n4. Remove and discard Supernatant. Remove 96-Well Block from magnetic stand. ");
      MECC::TraceComment("Group start - (5) PROTOCOL (Zyppy Wash Buffer 1)\n1. Dispense 400 µL of Zyppy Wash Buffer to each well of the plate.\n2. Transfer to HHS and Vortex for 30 seconds to re-suspend beads.\n3. Transfer Collection Plate to magnetic stand and incubate for 2 minutes.\n4. Remove and discard Supernatant. Remove 96-Well Block from magnetic stand. ");
      MECC::TraceComment("Group start - Zyppy Wash Buffer Step Variable and Sequence Assignment");
      Zyppy_Zyppy_Wash_Buffer_Volume = 400;
      Zyppy_Zyppy_Wash_Buffer_Vortex_Duration = 30;
      Zyppy_Zyppy_Wash_Buffer_Magnet_Incubation_Duration = 120;
      Zyppy_Zyppy_Wash_Buffer_Supernatant_Removal_Volume = 450;
      MECC::TraceComment("Group end - Zyppy Wash Buffer Step Variable and Sequence Assignment");
      MECC::TraceComment("Group start - 1. Dispense 400 µL of Zyppy Wash Buffer to each well of the plate.");
      {
        loopCounter8 = 0;
        while (
           (ML_STAR.Zyppy_Collection_Plate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Zyppy_Collection_Plate, 1, ML_STAR.Zyppy_Wash_Buffer_1, 1, ML_STAR.Zyppy_Zyppy_Wash_Buffer_Transfer_1_1000F_Tips, 1);
          loopCounter8 = loopCounter8 + 1;
          {
            	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
          }
          if ( ML_STAR.Zyppy_Collection_Plate.GetCurrentPosition() == 0 ) t_intRemainingPositions = 0;
          else t_intRemainingPositions = ML_STAR.Zyppy_Collection_Plate.GetCount() - ML_STAR.Zyppy_Collection_Plate.GetCurrentPosition() + 1;
          if (t_intRemainingPositions <= 8)
          {
            {
              	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
            }
          }
          else
          {
            {
              	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
            }
          }
          if (
             (ML_STAR.Zyppy_Collection_Plate.GetCurrentPosition() > 0 && ML_STAR.Zyppy_Collection_Plate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Zyppy_Collection_Plate.SetMax(ML_STAR.Zyppy_Collection_Plate.GetTotal());
        ML_STAR.Zyppy_Wash_Buffer_1.SetMax(ML_STAR.Zyppy_Wash_Buffer_1.GetTotal());
        ML_STAR.Zyppy_Zyppy_Wash_Buffer_Transfer_1_1000F_Tips.SetMax(ML_STAR.Zyppy_Zyppy_Wash_Buffer_Transfer_1_1000F_Tips.GetTotal());
        ML_STAR.Zyppy_Collection_Plate.SetCurrentPosition(1);
        ML_STAR.Zyppy_Wash_Buffer_1.SetCurrentPosition(1);
        ML_STAR.Zyppy_Zyppy_Wash_Buffer_Transfer_1_1000F_Tips.SetCurrentPosition(1);
      }
      MECC::TraceComment("Group end - 1. Dispense 400 µL of Zyppy Wash Buffer to each well of the plate.");
      MECC::TraceComment("Group start - 2. Transfer to HHS and Vortex for 30 seconds to re-suspend beads.");
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      HSS_Shaking(Zyppy_varHHS1, 1100, Zyppy_Zyppy_Wash_Buffer_Vortex_Duration);
      MECC::TraceComment("Group end - 2. Transfer to HHS and Vortex for 30 seconds to re-suspend beads.");
      MECC::TraceComment("Group start - 3. Transfer Collection Plate to magnetic stand and incubate for 2 minutes.");
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      if( 0 == timer4.SetTimer(Zyppy_Zyppy_Wash_Buffer_Magnet_Incubation_Duration) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer4.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      MECC::TraceComment("Group end - 3. Transfer Collection Plate to magnetic stand and incubate for 2 minutes.");
      MECC::TraceComment("Group start - 4. Remove and discard Supernatant. Remove 96-Well Block from magnetic stand. ");
      if (Zyppy_var_Sample_Number == 96)
      {
        {
          	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
        }
        {
          	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
        }
      }
      else
      {
        {
          loopCounter7 = 0;
          while (
             (ML_STAR.Zyppy_Magnet_MIDI_Plate.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.Zyppy_96_Gravity_Waste, 1, ML_STAR.Zyppy_Magnet_MIDI_Plate, 1, ML_STAR.Zyppy_Zyppy_Wash_Buffer_Transfer_1_1000F_Tips, 1);
            loopCounter7 = loopCounter7 + 1;
            {
              	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
            }
            {
              	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
            }
            if (
               (ML_STAR.Zyppy_Magnet_MIDI_Plate.GetCurrentPosition() > 0 && ML_STAR.Zyppy_Magnet_MIDI_Plate.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.Zyppy_96_Gravity_Waste.SetMax(ML_STAR.Zyppy_96_Gravity_Waste.GetTotal());
          ML_STAR.Zyppy_Magnet_MIDI_Plate.SetMax(ML_STAR.Zyppy_Magnet_MIDI_Plate.GetTotal());
          ML_STAR.Zyppy_Zyppy_Wash_Buffer_Transfer_1_1000F_Tips.SetMax(ML_STAR.Zyppy_Zyppy_Wash_Buffer_Transfer_1_1000F_Tips.GetTotal());
          ML_STAR.Zyppy_96_Gravity_Waste.SetCurrentPosition(1);
          ML_STAR.Zyppy_Magnet_MIDI_Plate.SetCurrentPosition(1);
          ML_STAR.Zyppy_Zyppy_Wash_Buffer_Transfer_1_1000F_Tips.SetCurrentPosition(1);
        }
      }
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      MECC::TraceComment("Group end - 4. Remove and discard Supernatant. Remove 96-Well Block from magnetic stand. ");
      MECC::TraceComment("Group end - (5) PROTOCOL (Zyppy Wash Buffer 1)\n1. Dispense 400 µL of Zyppy Wash Buffer to each well of the plate.\n2. Transfer to HHS and Vortex for 30 seconds to re-suspend beads.\n3. Transfer Collection Plate to magnetic stand and incubate for 2 minutes.\n4. Remove and discard Supernatant. Remove 96-Well Block from magnetic stand. ");
    }
    MECC::TraceComment("Group start - (6) PROTOCOL (Zyppy Wash Buffer 2)\n1. Dispense 400 µL of Zyppy Wash Buffer to each well of the plate.\n2. Transfer to HHS and Vortex for 30 seconds to re-suspend beads.\n3. Transfer Collection Plate to magnetic stand and incubate for 2 minutes.\n4. Remove and discard Supernatant. Remove 96-Well Block from magnetic stand to HHS. ");
    if(0){
      MECC::TraceComment("Group start - Zyppy Wash Buffer Step Variable and Sequence Assignment");
      Zyppy_Zyppy_Wash_Buffer_Volume = 400;
      Zyppy_Zyppy_Wash_Buffer_Vortex_Duration = 30;
      Zyppy_Zyppy_Wash_Buffer_Magnet_Incubation_Duration = 120;
      Zyppy_Zyppy_Wash_Buffer_Supernatant_Removal_Volume = 450;
      MECC::TraceComment("Group end - Zyppy Wash Buffer Step Variable and Sequence Assignment");
      MECC::TraceComment("Group start - 1. Dispense 400 µL of Zyppy Wash Buffer to each well of the plate.");
      {
        loopCounter8 = 0;
        while (
           (ML_STAR.Zyppy_Collection_Plate.GetCurrentPosition() > 0)
        )
        {
          AlignSequences(hslTrue, ML_STAR.Zyppy_Collection_Plate, 1, ML_STAR.Zyppy_Wash_Buffer_2, 1, ML_STAR.Zyppy_Zyppy_Wash_Buffer_Transfer_2_1000F_Tips, 1);
          loopCounter8 = loopCounter8 + 1;
          {
            	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
          }
          if ( ML_STAR.Zyppy_Collection_Plate.GetCurrentPosition() == 0 ) t_intRemainingPositions = 0;
          else t_intRemainingPositions = ML_STAR.Zyppy_Collection_Plate.GetCount() - ML_STAR.Zyppy_Collection_Plate.GetCurrentPosition() + 1;
          if (t_intRemainingPositions <= 8)
          {
            {
              	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
            }
          }
          else
          {
            {
              	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
            }
          }
          if (
             (ML_STAR.Zyppy_Collection_Plate.GetCurrentPosition() > 0 && ML_STAR.Zyppy_Collection_Plate.GetMax() == 0 )
          )
          { MECC::EndlessSequenceLoopWarning(GetFileName()); }
        }
        ML_STAR.Zyppy_Collection_Plate.SetMax(ML_STAR.Zyppy_Collection_Plate.GetTotal());
        ML_STAR.Zyppy_Wash_Buffer_2.SetMax(ML_STAR.Zyppy_Wash_Buffer_2.GetTotal());
        ML_STAR.Zyppy_Zyppy_Wash_Buffer_Transfer_2_1000F_Tips.SetMax(ML_STAR.Zyppy_Zyppy_Wash_Buffer_Transfer_2_1000F_Tips.GetTotal());
        ML_STAR.Zyppy_Collection_Plate.SetCurrentPosition(1);
        ML_STAR.Zyppy_Wash_Buffer_2.SetCurrentPosition(1);
        ML_STAR.Zyppy_Zyppy_Wash_Buffer_Transfer_2_1000F_Tips.SetCurrentPosition(1);
      }
      MECC::TraceComment("Group end - 1. Dispense 400 µL of Zyppy Wash Buffer to each well of the plate.");
      MECC::TraceComment("Group start - 2. Transfer to HHS and Vortex for 30 seconds to re-suspend beads.");
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      HSS_Shaking(Zyppy_varHHS1, 1100, Zyppy_Zyppy_Wash_Buffer_Vortex_Duration);
      MECC::TraceComment("Group end - 2. Transfer to HHS and Vortex for 30 seconds to re-suspend beads.");
      MECC::TraceComment("Group start - 3. Transfer Collection Plate to magnetic stand and incubate for 2 minutes.");
      {
        	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
      }
      if( 0 == timer4.SetTimer(Zyppy_Zyppy_Wash_Buffer_Magnet_Incubation_Duration) )
      {
            MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 == timer4.WaitTimer(hslTrue, hslTrue) )
      {
            MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      MECC::TraceComment("Group end - 3. Transfer Collection Plate to magnetic stand and incubate for 2 minutes.");
    }
    MECC::TraceComment("Group start - 4. Remove and discard Supernatant. Remove 96-Well Block from magnetic stand to HHS. ");
    if(0){
      if (Zyppy_var_Sample_Number == 96)
      {
        {
          	ML_STAR._E294A9A7_BEFC_4000_9A4C_926B91B8DE1C("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"); // EasyHead96Aspirate
        }
        {
          	ML_STAR._7DE53592_BBE5_4f1d_B657_161F1AAECA3E("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"); // EasyHead96Dispense
        }
      }
      else
      {
        {
          loopCounter7 = 0;
          while (
             (ML_STAR.Zyppy_Magnet_MIDI_Plate.GetCurrentPosition() > 0)
          )
          {
            AlignSequences(hslTrue, ML_STAR.Zyppy_96_Gravity_Waste, 1, ML_STAR.Zyppy_Zyppy_Wash_Buffer_Transfer_2_1000F_Tips, 1, ML_STAR.Zyppy_Magnet_MIDI_Plate, 1);
            loopCounter7 = loopCounter7 + 1;
            {
              	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
            }
            {
              	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
            }
            if (
               (ML_STAR.Zyppy_Magnet_MIDI_Plate.GetCurrentPosition() > 0 && ML_STAR.Zyppy_Magnet_MIDI_Plate.GetMax() == 0 )
            )
            { MECC::EndlessSequenceLoopWarning(GetFileName()); }
          }
          ML_STAR.Zyppy_96_Gravity_Waste.SetMax(ML_STAR.Zyppy_96_Gravity_Waste.GetTotal());
          ML_STAR.Zyppy_Zyppy_Wash_Buffer_Transfer_2_1000F_Tips.SetMax(ML_STAR.Zyppy_Zyppy_Wash_Buffer_Transfer_2_1000F_Tips.GetTotal());
          ML_STAR.Zyppy_Magnet_MIDI_Plate.SetMax(ML_STAR.Zyppy_Magnet_MIDI_Plate.GetTotal());
          ML_STAR.Zyppy_96_Gravity_Waste.SetCurrentPosition(1);
          ML_STAR.Zyppy_Zyppy_Wash_Buffer_Transfer_2_1000F_Tips.SetCurrentPosition(1);
          ML_STAR.Zyppy_Magnet_MIDI_Plate.SetCurrentPosition(1);
        }
      }
    }
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    MECC::TraceComment("Group end - 4. Remove and discard Supernatant. Remove 96-Well Block from magnetic stand to HHS. ");
    MECC::TraceComment("Group end - (6) PROTOCOL (Zyppy Wash Buffer 2)\n1. Dispense 400 µL of Zyppy Wash Buffer to each well of the plate.\n2. Transfer to HHS and Vortex for 30 seconds to re-suspend beads.\n3. Transfer Collection Plate to magnetic stand and incubate for 2 minutes.\n4. Remove and discard Supernatant. Remove 96-Well Block from magnetic stand to HHS. ");
    MECC::TraceComment("Group start - (7) PROTOCOL (Elution Buffer)\n1. Incubate on heating element (65 C) for 30 minutes.\n2. Transfer off HHS and transfer 40 µL of Zyppy Elution Buffer to each well of the Collection Plate.\n3. Transfer to HHS and Vortex for 10 seconds.\n4. Incubate for 5 minutes. Every minute, vortex for 5 seconds to resuspend beads.\n5. Transfer to magnetic stand and incubate for 1 minute.\n6. Transfer Eluate to Elution Plate");
    MECC::TraceComment("Group start - Elution Buffer Step Variable and Sequence Assignment");
    Zyppy_Drying_Time_Duration = 1800;
    Zyppy_Elution_Buffer_Volume = 40;
    Zyppy_Elution_Buffer_Vortex_Duration = 10;
    Zyppy_Elution_Buffer_Incubation_Temperature = 65;
    Zyppy_Elution_Buffer_Vortex_Intermittent_Incubation_Duration = 55;
    Zyppy_Elution_Buffer_Vortex_Intermittent_Vortex_Duration = 5;
    Zyppy_Elution_Buffer_Vortex_Loop_Recursion_Amount = 5;
    Zyppy_Elution_Buffer_Magnet_Incubation_Duration = 60;
    Zyppy_Elution_Buffer_Elution_Plate_Transfer_Volume = 30;
    MECC::TraceComment("Group end - Elution Buffer Step Variable and Sequence Assignment");
    MECC::TraceComment("Group start - 1. Incubate on heating element (65 C) for 30 minutes.");
    HSLHamHeaterShaker::StartTempCtrl(Zyppy_varHHS1, 65, 0);
    if( 0 == timer5.SetTimer(Zyppy_Drying_Time_Duration) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == timer5.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    HSLHamHeaterShaker::StartTempCtrl(Zyppy_varHHS1, 22, 0);
    MECC::TraceComment("Group end - 1. Incubate on heating element (65 C) for 30 minutes.");
    MECC::TraceComment("Group start - 2. Transfer off HHS and transfer 40 µL of Zyppy Elution Buffer to each well of the Collection Plate.");
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    {
      loopCounter8 = 0;
      while (
         (ML_STAR.Zyppy_Collection_Plate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Zyppy_Collection_Plate, 1, ML_STAR.Zyppy_Elution_Buffer, 1, ML_STAR.Zyppy_Elution_Buffer_Transfer_50F_Tips, 1);
        loopCounter8 = loopCounter8 + 1;
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        if (
           (ML_STAR.Zyppy_Collection_Plate.GetCurrentPosition() > 0 && ML_STAR.Zyppy_Collection_Plate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Zyppy_Collection_Plate.SetMax(ML_STAR.Zyppy_Collection_Plate.GetTotal());
      ML_STAR.Zyppy_Elution_Buffer.SetMax(ML_STAR.Zyppy_Elution_Buffer.GetTotal());
      ML_STAR.Zyppy_Elution_Buffer_Transfer_50F_Tips.SetMax(ML_STAR.Zyppy_Elution_Buffer_Transfer_50F_Tips.GetTotal());
      ML_STAR.Zyppy_Collection_Plate.SetCurrentPosition(1);
      ML_STAR.Zyppy_Elution_Buffer.SetCurrentPosition(1);
      ML_STAR.Zyppy_Elution_Buffer_Transfer_50F_Tips.SetCurrentPosition(1);
    }
    MECC::TraceComment("Group end - 2. Transfer off HHS and transfer 40 µL of Zyppy Elution Buffer to each well of the Collection Plate.");
    MECC::TraceComment("Group start - 3. Transfer to HHS and Vortex for 10 seconds.");
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    HSS_Shaking(Zyppy_varHHS1, 1100, Zyppy_Elution_Buffer_Vortex_Duration);
    MECC::TraceComment("Group end - 3. Transfer to HHS and Vortex for 10 seconds.");
    MECC::TraceComment("Group start - 4. Incubate for 5 minutes. Every minute, vortex for 5 seconds to resuspend beads.");
    HSLHamHeaterShaker::StartTempCtrl(Zyppy_varHHS1, 65, 0);
    {
      for(loopCounter9 = 0; loopCounter9 < Zyppy_Elution_Buffer_Vortex_Loop_Recursion_Amount;)
      {
        loopCounter9 = loopCounter9 + 1;
        HSLHamHeaterShaker::StartShaker(Zyppy_varHHS1, 1100);
        if( 0 == timer6.SetTimer(Zyppy_Elution_Buffer_Vortex_Intermittent_Vortex_Duration) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer6.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        HSLHamHeaterShaker::StopShaker(Zyppy_varHHS1);
        if( 0 == timer7.SetTimer(Zyppy_Elution_Buffer_Vortex_Intermittent_Incubation_Duration) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer7.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
    }
    HSLHamHeaterShaker::StartTempCtrl(Zyppy_varHHS1, 22, 0);
    MECC::TraceComment("Group end - 4. Incubate for 5 minutes. Every minute, vortex for 5 seconds to resuspend beads.");
    MECC::TraceComment("Group start - 5. Transfer to magnetic stand and incubate for 1 minute.");
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    if( 0 == timer8.SetTimer(Zyppy_Elution_Buffer_Magnet_Incubation_Duration) )
    {
          MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 == timer8.WaitTimer(hslTrue, hslTrue) )
    {
          MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    MECC::TraceComment("Group end - 5. Transfer to magnetic stand and incubate for 1 minute.");
    MECC::TraceComment("Group start - 6. Transfer Eluate to Elution Plate");
    {
      loopCounter7 = 0;
      while (
         (ML_STAR.Zyppy_Magnet_MIDI_Plate.GetCurrentPosition() > 0)
      )
      {
        AlignSequences(hslTrue, ML_STAR.Zyppy_Elution_Buffer_Transfer_50F_Tips, 1, ML_STAR.Zyppy_Elution_Plate, 1, ML_STAR.Zyppy_Magnet_MIDI_Plate, 1);
        loopCounter7 = loopCounter7 + 1;
        {
          	ML_STAR._E91EFCB6_A447_4dfc_828E_7EBF29139CD2("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"); // EasyAspirate
        }
        {
          	ML_STAR._01571348_0D66_4d27_9E97_65F9EE27C956("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"); // EasyDispense
        }
        if (
           (ML_STAR.Zyppy_Magnet_MIDI_Plate.GetCurrentPosition() > 0 && ML_STAR.Zyppy_Magnet_MIDI_Plate.GetMax() == 0 )
        )
        { MECC::EndlessSequenceLoopWarning(GetFileName()); }
      }
      ML_STAR.Zyppy_Elution_Buffer_Transfer_50F_Tips.SetMax(ML_STAR.Zyppy_Elution_Buffer_Transfer_50F_Tips.GetTotal());
      ML_STAR.Zyppy_Elution_Plate.SetMax(ML_STAR.Zyppy_Elution_Plate.GetTotal());
      ML_STAR.Zyppy_Magnet_MIDI_Plate.SetMax(ML_STAR.Zyppy_Magnet_MIDI_Plate.GetTotal());
      ML_STAR.Zyppy_Elution_Buffer_Transfer_50F_Tips.SetCurrentPosition(1);
      ML_STAR.Zyppy_Elution_Plate.SetCurrentPosition(1);
      ML_STAR.Zyppy_Magnet_MIDI_Plate.SetCurrentPosition(1);
    }
    {
      	ML_STAR._7EF8970F_F753_4c75_AD76_0E0D9C2CC9CD("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"); // EasyCOREGripTransport
    }
    MECC::TraceComment("Group end - 6. Transfer Eluate to Elution Plate");
    MECC::TraceComment("Group end - (7) PROTOCOL (Elution Buffer)\n1. Incubate on heating element (65 C) for 30 minutes.\n2. Transfer off HHS and transfer 40 µL of Zyppy Elution Buffer to each well of the Collection Plate.\n3. Transfer to HHS and Vortex for 10 seconds.\n4. Incubate for 5 minutes. Every minute, vortex for 5 seconds to resuspend beads.\n5. Transfer to magnetic stand and incubate for 1 minute.\n6. Transfer Eluate to Elution Plate");
    customDialog_5.InitCustomDialog("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");
    customDialog_5.ShowCustomDialog();
    HSLHamHeaterShaker::Terminate();
  } }
